begin model


begin parameters
    Total_oligos     300
    fraction_M9      0.9554448318
    fraction_M8      0.0443281069
    fraction_G1M9    0.0002270614
    ManI_tot         0.821
    ManII_tot        0.625
    a6FucT_tot       0.266
    GnTI_tot         0.260
    GnTII_tot        1.557
    GnTIII_tot       0.0089
    GnTIV_tot        0.222
    GnTV_tot         0.099
    iGnT_tot         3.47
    b4GalT_tot       0.196
    a3SiaT_tot       0.240
    IGnT_tot         2.23
    a6SiaT_tot       2.72
    b3GalT_tot       5.04
    FucTLe_tot       0.071
    FucTH_tot        5.47
    a3FucT_tot       7.42
    GalNAcT_A_tot    0
    GalT_B_tot       0.929
    kf1              1923.75
    kf2              1923.75
    kf5              1923.75
    kf6              1923.75
    kf7              253
    kf8              990
    kf9              1320
    kf10             607.2
    kf11             187
    kf12             1410
    kf13             24.66
    kf14             8712
    kf15             484.1
    kf16             25
    kf17             25
    kf18             25
    kf20             481
    kf21             25
    kf22             28.2
    kf23             28.2
    kf24             25
    kf25             294
    kf26             390
    Km1              827
    Km2              5000
    Km5              200
    Km6              100
    Km7              25
    Km8              260
    Km9              190
    Km10             190
    Km11             3400
    Km12             130
    Km13             700
    Km14             150
    Km15             260
    Km16             440
    Km17             180
    Km18             110
    Km20             1900
    Km21             1600
    Km22             1500
    Km23             1500
    Km24             1400
    Km25             15
    Km26             281
    Kd1              0
    Kd2              0
    Kd5              0
    Kd6              0
    Kd7              46
    Kd8              170
    Kd9              960
    Kd10             3100
    Kd11             8300
    Kd12             3500
    Kd13             55
    Kd14             0
    Kd15             57
    Kd16             0
    Kd17             0
    Kd18             250
    Kd20             10.5
    Kd21             5
    Kd22             108
    Kd23             108
    Kd24             9
    Kd25             13
    Kd26             285
    factor_Km1_1     5.9712965315      # 182.052
    factor_Km1_2     5.337114578       # 4.21136
    factor_Km1_3     2.899766119       # 1.72953
    factor_Km10      20                # adj 5
    factor_Km11_1    5                 # adj 6
    factor_Km11_2    1.5               # adj 7
    factor_Km11_3    0.178             # adj 8
    factor_Km12      0.692307692307692 # adj 10
    factor_Km13_1    10                # adj 12, omitted, do not work
    factor_Km13_2    4                 # adj 13
    factor_Km13_3    4                 # adj 14, omitted, do not work
    factor_Km14_1    0.8               # adj 15
    factor_Km14_2    5.4               # adj 16
    factor_Km14_3    0.666666666666667 # adj 17
    factor_Km14_4    3.62              # adj 19
    factor_Km14_5    26.66666666666667 # adj 20
    factor_Km14_6    14.594726702      # adj 23, is not presented in the article
    factor_Km15      5                 # adj 24
    factor_Km20_1    0.105263157894737 # adj 25
    factor_kf20_1    0.051975051975052 # adj 25
    factor_Km20_2    0.352631578947368 # adj 26
    factor_kf20_2    0.051975051975052 # adj 26
    factor_Km21_1    0.6875            # adj 27
    factor_Km21_2    0.0625            # adj 28
    factor_Km24      0.5               # adj 29
    factor_kf24      4.08              # adj 29

end parameters

begin molecule types
    AN(a3)
    NN(a3,a6)
    A(a2,a3,a6,b3~l~r~n,b4,b6)
    GN(a3,a4,a6,b2,b3,b3,b4,b4,b6,r~0~1)
    F(a2,a3,a4,a6)
    M(a2,a2,a3,a3,a6,a6,b2,b4,b4,b6)
    G(a3)
    ManI
    ManII
    a6FucT
    GnTI
    GnTII
    GnTIII
    GnTIV
    GnTV
    iGnT
    b4GalT
    a3SiaT
    IGnT
    a6SiaT
    b3GalT
    FucTLe
    FucTH
    a3FucT
    GalT_B
    GalNAcT_A
end molecule types

begin species
    M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M(a2!1,a2!2,a3,a3,a6,a6,b2,b4,b4,b6).M(a2,a2!2,a3!3,a3,a6,a6,b2,b4,b4,b6).M(a2!4,a2,a3,a3,a6,a6,b2,b4,b4,b6).M(a2!4,a2,a3!5,a3,a6,a6,b2,b4,b4,b6).M(a2!6,a2,a3,a3,a6,a6,b2,b4,b4,b6).M(a2!6,a2,a3,a3,a6!7,a6,b2,b4,b4,b6).M(a2,a2,a3!5,a3,a6!7,a6!8,b2,b4,b4,b6).M(a2,a2,a3!3,a3,a6!8,a6,b2,b4!9,b4,b6).GN(a3,a4,a6,b2,b3,b3,b4!9,b4!10,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!10,b4,b6,r~1) fraction_M9*Total_oligos
    M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M(a2!1,a2!2,a3,a3,a6,a6,b2,b4,b4,b6).M(a2,a2!2,a3!3,a3,a6,a6,b2,b4,b4,b6).M(a2,a2,a3!4,a3,a6,a6,b2,b4,b4,b6).M(a2!5,a2,a3,a3,a6,a6,b2,b4,b4,b6).M(a2!5,a2,a3,a3,a6!6,a6,b2,b4,b4,b6).M(a2,a2,a3!4,a3,a6!6,a6!7,b2,b4,b4,b6).M(a2,a2,a3!3,a3,a6!7,a6,b2,b4!8,b4,b6).GN(a3,a4,a6,b2,b3,b3,b4!8,b4!9,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!9,b4,b6,r~1) fraction_M8*Total_oligos
    G(a3!11).M(a2!1,a2,a3!11,a3,a6,a6,b2,b4,b4,b6).M(a2!1,a2!2,a3,a3,a6,a6,b2,b4,b4,b6).M(a2,a2!2,a3!3,a3,a6,a6,b2,b4,b4,b6).M(a2!4,a2,a3,a3,a6,a6,b2,b4,b4,b6).M(a2!4,a2,a3!5,a3,a6,a6,b2,b4,b4,b6).M(a2!6,a2,a3,a3,a6,a6,b2,b4,b4,b6).M(a2!6,a2,a3,a3,a6!7,a6,b2,b4,b4,b6).M(a2,a2,a3!5,a3,a6!7,a6!8,b2,b4,b4,b6).M(a2,a2,a3!3,a3,a6!8,a6,b2,b4!9,b4,b6).GN(a3,a4,a6,b2,b3,b3,b4!9,b4!10,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!10,b4,b6,r~1) fraction_G1M9*Total_oligos
    ManI        ManI_tot
    ManII       ManII_tot
    a6FucT      a6FucT_tot
    GnTI        GnTI_tot
    GnTII       GnTII_tot
    GnTIII      GnTIII_tot
    GnTIV       GnTIV_tot
    GnTV        GnTV_tot
    iGnT        iGnT_tot
    b4GalT      b4GalT_tot
    a3SiaT      a3SiaT_tot
    IGnT        IGnT_tot
    a6SiaT      a6SiaT_tot
    b3GalT      b3GalT_tot
    FucTLe      FucTLe_tot
    FucTH       FucTH_tot
    a3FucT      a3FucT_tot
    GalNAcT_A   GalNAcT_A_tot
    GalT_B      GalT_B_tot
end species


begin reaction rules

#Rule 1
# M <=6
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!+,a2!1,a3,a3,a6,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2!+,a2,a3,a3,a6,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1) exclude_reactants(1,G) \
include_products(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) include_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
exclude_reactants(1,M.M.M.M.M.M.M)
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3!+,a3,a6,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2,a2,a3!+,a3,a6,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1) exclude_reactants(1,G) \
include_products(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) include_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
exclude_reactants(1,M.M.M.M.M.M.M)
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3,a3,a6!+,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2,a2,a3,a3,a6!+,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1) exclude_reactants(1,G) \
include_products(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) include_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
exclude_reactants(1,M.M.M.M.M.M.M)

M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!+,a2!1,a3,a3,a6,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2!+,a2,a3,a3,a6,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1) exclude_reactants(1,G) \
include_reactants(1,M(a2,a2,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) exclude_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
exclude_reactants(1,M.M.M.M.M.M.M)
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3!+,a3,a6,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2,a2,a3!+,a3,a6,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1) exclude_reactants(1,G) \
include_reactants(1,M(a2,a2,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) exclude_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
exclude_reactants(1,M.M.M.M.M.M.M)
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3,a3,a6!+,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2,a2,a3,a3,a6!+,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1) exclude_reactants(1,G) \
include_reactants(1,M(a2,a2,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) exclude_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
exclude_reactants(1,M.M.M.M.M.M.M)
# M = 9
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!+,a2!1,a3,a3,a6,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2!+,a2,a3,a3,a6,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_1) exclude_reactants(1,G) \
include_products(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) include_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M.M.M)
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3!+,a3,a6,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2,a2,a3!+,a3,a6,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_1) exclude_reactants(1,G) \
include_products(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) include_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M.M.M)
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3,a3,a6!+,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2,a2,a3,a3,a6!+,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_1) exclude_reactants(1,G) \
include_products(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) include_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M.M.M)

M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!+,a2!1,a3,a3,a6,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2!+,a2,a3,a3,a6,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_1) exclude_reactants(1,G) \
include_reactants(1,M(a2,a2,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) exclude_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M.M.M)
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3!+,a3,a6,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2,a2,a3!+,a3,a6,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_1) exclude_reactants(1,G) \
include_reactants(1,M(a2,a2,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) exclude_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M.M.M)
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3,a3,a6!+,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2,a2,a3,a3,a6!+,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_1) exclude_reactants(1,G) \
include_reactants(1,M(a2,a2,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) exclude_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M.M.M)
# M = 8
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!+,a2!1,a3,a3,a6,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2!+,a2,a3,a3,a6,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_2) exclude_reactants(1,G) \
include_products(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) include_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M.M)
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3!+,a3,a6,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2,a2,a3!+,a3,a6,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_2) exclude_reactants(1,G) \
include_products(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) include_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M.M)
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3,a3,a6!+,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2,a2,a3,a3,a6!+,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_2) exclude_reactants(1,G) \
include_products(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) include_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M.M)

M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!+,a2!1,a3,a3,a6,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2!+,a2,a3,a3,a6,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_2) exclude_reactants(1,G) \
include_reactants(1,M(a2,a2,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) exclude_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M.M)
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3!+,a3,a6,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2,a2,a3!+,a3,a6,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_2) exclude_reactants(1,G) \
include_reactants(1,M(a2,a2,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) exclude_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M.M)
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3,a3,a6!+,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2,a2,a3,a3,a6!+,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_2) exclude_reactants(1,G) \
include_reactants(1,M(a2,a2,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) exclude_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M.M)
#M = 7
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!+,a2!1,a3,a3,a6,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2!+,a2,a3,a3,a6,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_3) exclude_reactants(1,G) \
include_products(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) include_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M)
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3!+,a3,a6,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2,a2,a3!+,a3,a6,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_3) exclude_reactants(1,G) \
include_products(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) include_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M)
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3,a3,a6!+,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2,a2,a3,a3,a6!+,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_3) exclude_reactants(1,G) \
include_products(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) include_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M)

M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!+,a2!1,a3,a3,a6,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2!+,a2,a3,a3,a6,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_3) exclude_reactants(1,G) \
include_reactants(1,M(a2,a2,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) exclude_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M)
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3!+,a3,a6,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2,a2,a3!+,a3,a6,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_3) exclude_reactants(1,G) \
include_reactants(1,M(a2,a2,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) exclude_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M)
M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3,a3,a6!+,a6,b2,b4,b4,b6) + ManI -> \
M%1(a2,a2,a3,a3,a6!+,a6,b2,b4,b4,b6) + ManI MM(kf1,Km1*factor_Km1_3) exclude_reactants(1,G) \
include_reactants(1,M(a2,a2,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) exclude_reactants(1,M(a2!3).M(a2!3,a3!1).M(a6!2).M(a3!1,a6!2,a6!+)) \
include_reactants(1,M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M.M) exclude_reactants(1,M.M.M.M.M.M.M.M)

#Rule 2
M%3(a2,a2,a3!+,a3,a6,a6,b2,b4,b4,b6).M(a2!1,a2,a3,a3,a6,a6,b2,b4,b4,b6).M%1(a2!1,a2,a3!2,a3,a6,a6,b2,b4,b4,b6).M%2(a2,a2,a3,a3,a6!3,a6,b2,b4,b4,b6).M%4(a2,a2,a3!2,a3,a6!3,a6!+,b2,b4,b4,b6) \
+ ManI -> M%3(a2,a2,a3!+,a3,a6,a6,b2,b4,b4,b6).M%1(a2,a2,a3!1,a3,a6,a6,b2,b4,b4,b6).M%2(a2,a2,a3,a3,a6!2,a6,b2,b4,b4,b6).M%4(a2,a2,a3!1,a3,a6!2,a6!+,b2,b4,b4,b6) \
+ ManI MM(kf2,Km2) exclude_reactants(1,G)

#Rule 5
M(a2,a2,a3!1,a3,a6,a6,b2,b4,b4,b6).M%1(a2,a2,a3,a3,a6!2,a6,b2,b4,b4,b6).M%2(a2,a2,a3!1,a3,a6!2,a6!+,b2,b4,b4,b6) + ManII -> \
M%1(a2,a2,a3,a3,a6!1,a6,b2,b4,b4,b6).M%2(a2,a2,a3,a3,a6!1,a6!+,b2,b4,b4,b6) + ManII MM(kf5,Km5) \
include_reactants(1,GN(a3,a4,a6,b2!1,b3,b3,b4,b4,b6).M(a3!+,b2!1)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

#Rule 6
M(a2,a2,a3,a3,a6!1,a6,b2,b4,b4,b6).M%1(a2,a2,a3,a3,a6!1,a6!+,b2,b4,b4,b6) + ManII -> \
M%1(a2,a2,a3,a3,a6,a6!+,b2,b4,b4,b6) + ManII MM(kf6,Km6) \
include_reactants(1,GN(a3,a4,a6,b2!1,b3,b3,b4,b4,b6).M(a3!+,b2!1)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

#Rule 7
GN%1(b4!1,r~0).GN%2(a6,b4!1) + a6FucT -> GN%1(b4!1,r~0).F(a2,a3,a4,a6!2).GN%2(a6!2,b4!1) + a6FucT MM(kf7,Km7) \
exclude_reactants(1,A) include_reactants(1,GN(b2!1).M(a3!+,b2!1)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

#Rule 8
M%1(a2,a2,a3!1,a3,a6,a6,b2,b4,b4,b6).M%2(a2,a2,a3!2,a3,a6,a6,b2,b4,b4,b6).M%3(a2,a2,a3,a3,a6!3,a6,b2,b4,b4,b6).M%4(a2,a2,a3!2,a3,a6!3,a6!4,b2,b4,b4,b6).M%5(a2,a2,a3!1,a3,a6!4,a6,b2,b4!+,b4,b6) \
 + GnTI -> \
GN(a3,a4,a6,b2!5,b3,b3,b4,b4,b6,r~0).M%1(a2,a2,a3!1,a3,a6,a6,b2!5,b4,b4,b6).M%2(a2,a2,a3!2,a3,a6,a6,b2,b4,b4,b6).M%3(a2,a2,a3,a3,a6!3,a6,b2,b4,b4,b6).M%4(a2,a2,a3!2,a3,a6!3,a6!4,b2,b4,b4,b6).M%5(a2,a2,a3!1,a3,a6!4,a6,b2,b4!+,b4,b6) \
 + GnTI MM(kf8,Km8)

#Rule 9
GN%1(a3,a4,a6,b2!3,b3,b3,b4,b4,b6).M%2(a3!1,b2!3).M%3(a2,a2,a3,a3,a6,a6!2,b2,b4,b4,b6).M%4(a2,a2,a3!1,a3,a6!2,a6,b2,b4!+,b4,b6) \
+ GnTII -> GN%1(a3,a4,a6,b2!3,b3,b3,b4,b4,b6).M%2(a3!1,b2!3).GN(a3,a4,a6,b2!4,b3,b3,b4,b4,b6,r~0).M%3(a2,a2,a3,a3,a6,a6!2,b2!4,b4,b4,b6).M%4(a2,a2,a3!1,a3,a6!2,a6,b2,b4!+,b4,b6)\
 + GnTII MM(kf9,Km9)

#Rule 10
GN%1(b2!1).M%2(a3!2,b2!1).M%3(a3!2,b4) + GnTIII -> GN%1(b2!1).GN(a3,a4,a6,b2,b3,b3,b4!3,b4,b6,r~0).M%2(a3!2,b2!1).M%3(a3!2,b4!3) + GnTIII \
MM(kf10,Km10) exclude_reactants(1,A(b3!+)) exclude_reactants(1,A(b4!+)) exclude_reactants(1,A(b6!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(a6!+,b2!1))
# additional multipliers
GN%1(b2!1).M%2(a3!2,b2!1).M%3(a3!2,b4) + GnTIII -> GN%1(b2!1).GN(a3,a4,a6,b2,b3,b3,b4!3,b4,b6,r~0).M%2(a3!2,b2!1).M%3(a3!2,b4!3) + GnTIII \
MM(kf10,Km10*factor_Km10) exclude_reactants(1,A(b3!+)) exclude_reactants(1,A(b4!+)) exclude_reactants(1,A(b6!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(a6!+,b2!1))

#Rule 11
# without multipliers
GN%1(a3,a4,a6,b2!1,b3,b3,b4,b4,b6).M(a2,a2,a3!+,a3,a6,a6,b2!1,b4,b4,b6) + GnTIV -> \
GN%1(a3,a4,a6,b2!1,b3,b3,b4,b4,b6).GN(a3,a4,a6,b2,b3,b3,b4!2,b4,b6,r~0).M(a2,a2,a3!+,a3,a6,a6,b2!1,b4!2,b4,b6) \
+ GnTIV MM(kf11,Km11) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(b6!1).M(b6!1,a6!+)) \
exclude_reactants(1,A(b4!1).GN(b4!1,b2!2).M(b2!2,a6!+)) exclude_reactants(1,A(b4!1).GN(b4!1,b6!2).M(b6!2,a6!+))
# additional multipliers (type 1)
GN%1(a3,a4,a6,b2!1,b3,b3,b4,b4,b6).M(a2,a2,a3!+,a3,a6,a6,b2!1,b4,b4,b6) + GnTIV -> \
GN%1(a3,a4,a6,b2!1,b3,b3,b4,b4,b6).GN(a3,a4,a6,b2,b3,b3,b4!2,b4,b6,r~0).M(a2,a2,a3!+,a3,a6,a6,b2!1,b4!2,b4,b6) \
+ GnTIV MM(kf11,Km11*factor_Km11_1) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))
# additional multipliers (type 2 without type 3)
GN%1(a3,a4,a6,b2!1,b3,b3,b4,b4,b6).M(a2,a2,a3!+,a3,a6,a6,b2!1,b4,b4,b6) + GnTIV -> \
GN%1(a3,a4,a6,b2!1,b3,b3,b4,b4,b6).GN(a3,a4,a6,b2,b3,b3,b4!2,b4,b6,r~0).M(a2,a2,a3!+,a3,a6,a6,b2!1,b4!2,b4,b6) \
+ GnTIV MM(kf11,Km11*factor_Km11_2) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
include_reactants(1,A(b4!1).GN(b4!1,b2!2).M(b2!2,a6!+),A(b4!1).GN(b4!1,b6!2).M(b6!2,a6!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(b6!1).M(b6!1,a6!+))
# additional multipliers (type 3 without type 2)
GN%1(a3,a4,a6,b2!1,b3,b3,b4,b4,b6).M(a2,a2,a3!+,a3,a6,a6,b2!1,b4,b4,b6) + GnTIV -> \
GN%1(a3,a4,a6,b2!1,b3,b3,b4,b4,b6).GN(a3,a4,a6,b2,b3,b3,b4!2,b4,b6,r~0).M(a2,a2,a3!+,a3,a6,a6,b2!1,b4!2,b4,b6) \
+ GnTIV MM(kf11,Km11*factor_Km11_3) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(b6!1).M(b6!1,a6!+)) \
exclude_reactants(1,A(b4!1).GN(b4!1,b2!2).M(b2!2,a6!+)) exclude_reactants(1,A(b4!1).GN(b4!1,b6!2).M(b6!2,a6!+))
# additional multipliers (type 2 & type 3)
GN%1(a3,a4,a6,b2!1,b3,b3,b4,b4,b6).M(a2,a2,a3!+,a3,a6,a6,b2!1,b4,b4,b6) + GnTIV -> \
GN%1(a3,a4,a6,b2!1,b3,b3,b4,b4,b6).GN(a3,a4,a6,b2,b3,b3,b4!2,b4,b6,r~0).M(a2,a2,a3!+,a3,a6,a6,b2!1,b4!2,b4,b6) \
+ GnTIV MM(kf11,Km11*factor_Km11_2*factor_Km11_3) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(b6!1).M(b6!1,a6!+)) \
include_reactants(1,A(b4!1).GN(b4!1,b2!2).M(b2!2,a6!+),A(b4!1).GN(b4!1,b6!2).M(b6!2,a6!+))

#Rule 12
GN%1(a3,a4,a6,b2!1,b3,b3,b4,b4,b6).M(a2,a2,a3,a3,a6!+,a6,b2!1,b4,b4,b6) + GnTV -> \
GN%1(a3,a4,a6,b2!1,b3,b3,b4,b4,b6).GN(a3,a4,a6,b2,b3,b3,b4,b4,b6!2,r~0).M(a2,a2,a3,a3,a6!+,a6,b2!1,b4,b4,b6!2) \
+ GnTV MM(kf12,Km12) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
exclude_reactants(1,GN(b4!1).M(b4!1,a3!+,a6,a6))
# additional multipliers
GN%1(a3,a4,a6,b2!1,b3,b3,b4,b4,b6).M(a2,a2,a3,a3,a6!+,a6,b2!1,b4,b4,b6) + GnTV -> \
GN%1(a3,a4,a6,b2!1,b3,b3,b4,b4,b6).GN(a3,a4,a6,b2,b3,b3,b4,b4,b6!2,r~0).M(a2,a2,a3,a3,a6!+,a6,b2!1,b4,b4,b6!2) \
+ GnTV MM(kf12,Km12*factor_Km12) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
include_reactants(1,GN(b4!1).M(b4!1,a3!+,a6,a6))

# WARNING: if max number of iterations is increased it may be necessary to add additional rules to Rule 13 family,
# due to difficulties with choosing right branch (and appropriate multiplier) using BioNetGen syntax.
#Rule 13
# first type branch (without multipliers)
A(a2,a3,a6,b3~n,b4!1,b6).GN%1(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).M(b6!2,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3~l!1,b4!2,b6).GN%1(b4!2,b6!3,a3,a4,a6,b2,b3,b3,b4,r~0).M(b6!3,a6!+) + iGnT MM(kf13,Km13) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4,r~0).M(b6!4,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!5,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!5,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4,r~0).M(b6!4,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4,r~0).M(b6!4,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!5,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!5,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4,r~0).M(b6!4,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b6!6,r~0).M(b6!6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!7,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!7,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b6!6,r~0).M(b6!6,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b6!6,r~0).M(b6!6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!7,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!7,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b6!6,r~0).M(b6!6,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b6!6,r~0).M(b6!6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!7,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!7,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b6!6,r~0).M(b6!6,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b6!6,r~0).M(b6!6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!7,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!7,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b6!6,r~0).M(b6!6,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%8(b4!7,b6!8,r~0).M(b6!8,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%6(b4!7,b6!8,r~0).M(b6!8,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%8(b4!7,b6!8,r~0).M(b6!8,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%6(b4!7,b6!8,r~0).M(b6!8,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%8(b4!7,b6!8,r~0).M(b6!8,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%6(b4!7,b6!8,r~0).M(b6!8,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%8(b4!7,b6!8,r~0).M(b6!8,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%6(b4!7,b6!8,r~0).M(b6!8,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%8(b4!7,b6!8,r~0).M(b6!8,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%6(b4!7,b6!8,r~0).M(b6!8,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%8(b4!7,b6!8,r~0).M(b6!8,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%6(b4!7,b6!8,r~0).M(b6!8,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%8(b4!7,b6!8,r~0).M(b6!8,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%6(b4!7,b6!8,r~0).M(b6!8,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%8(b4!7,b6!8,r~0).M(b6!8,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%6(b4!7,b6!8,r~0).M(b6!8,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

# second type branch (without multipliers)
A(a2,a3,a6,b3~n,b4!1,b6).GN%1(b4!1,b2!2,a3,a4,a6,b3,b3,b4,b6,r~0).M(b2!2,b6!+,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3~l!1,b4!2,b6).GN%1(b4!2,b2!3,a3,a4,a6,b3,b3,b4,b6,r~0).M(b2!3,b6!+,a6!+) + iGnT MM(kf13,Km13) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b2!4,r~0).M(b2!4,b6!+,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!5,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!5,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b2!4,r~0).M(b2!4,b6!+,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b2!4,r~0).M(b2!4,b6!+,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!5,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!5,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b2!4,r~0).M(b2!4,b6!+,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b2!6,r~0).M(b2!6,b6!+,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!7,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!7,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b2!6,r~0).M(b2!6,b6!+,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b2!6,r~0).M(b2!6,b6!+,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!7,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!7,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b2!6,r~0).M(b2!6,b6!+,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b2!6,r~0).M(b2!6,b6!+,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!7,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!7,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b2!6,r~0).M(b2!6,b6!+,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b2!6,r~0).M(b2!6,b6!+,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!7,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!7,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b2!6,r~0).M(b2!6,b6!+,a6!+) \
+ iGnT MM(kf13,Km13*factor_Km13_2) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%8(b4!7,b2!8,r~0).M(b2!8,b6!+,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%6(b4!7,b2!8,r~0).M(b2!8,b6!+,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%8(b4!7,b2!8,r~0).M(b2!8,b6!+,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%6(b4!7,b2!8,r~0).M(b2!8,b6!+,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%8(b4!7,b2!8,r~0).M(b2!8,b6!+,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%6(b4!7,b2!8,r~0).M(b2!8,b6!+,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%8(b4!7,b2!8,r~0).M(b2!8,b6!+,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%6(b4!7,b2!8,r~0).M(b2!8,b6!+,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%8(b4!7,b2!8,r~0).M(b2!8,b6!+,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%6(b4!7,b2!8,r~0).M(b2!8,b6!+,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%8(b4!7,b2!8,r~0).M(b2!8,b6!+,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%6(b4!7,b2!8,r~0).M(b2!8,b6!+,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%8(b4!7,b2!8,r~0).M(b2!8,b6!+,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%6(b4!7,b2!8,r~0).M(b2!8,b6!+,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%8(b4!7,b2!8,r~0).M(b2!8,b6!+,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%6(b4!7,b2!8,r~0).M(b2!8,b6!+,a6!+) \
+ iGnT MM(kf13,Km13) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

# second type branch (additional multipliers)
A(a2,a3,a6,b3~n,b4!1,b6).GN%1(b4!1,b2!2,a3,a4,a6,b3,b3,b4,b6,r~0).M(b2!2,b6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3~l!1,b4!2,b6).GN%1(b4!2,b2!3,a3,a4,a6,b3,b3,b4,b6,r~0).M(b2!3,b6,a6!+) + iGnT MM(kf13,Km13*factor_Km13_2) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b2!4,r~0).M(b2!4,b6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!5,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!5,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b2!4,r~0).M(b2!4,b6,a6!+) \
+ iGnT MM(kf13,Km13*factor_Km13_2) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b2!4,r~0).M(b2!4,b6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!5,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!5,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b2!4,r~0).M(b2!4,b6,a6!+) \
+ iGnT MM(kf13,Km13*factor_Km13_2) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b2!6,r~0).M(b2!6,b6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!7,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!7,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b2!6,r~0).M(b2!6,b6,a6!+) \
+ iGnT MM(kf13,Km13*factor_Km13_2) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b2!6,r~0).M(b2!6,b6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!7,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!7,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b2!6,r~0).M(b2!6,b6,a6!+) \
+ iGnT MM(kf13,Km13*factor_Km13_2) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b2!6,r~0).M(b2!6,b6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!7,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!7,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b2!6,r~0).M(b2!6,b6,a6!+) \
+ iGnT MM(kf13,Km13*factor_Km13_2) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b2!6,r~0).M(b2!6,b6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!7,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!7,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b2!6,r~0).M(b2!6,b6,a6!+) \
+ iGnT MM(kf13,Km13*factor_Km13_2) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%8(b4!7,b2!8,r~0).M(b2!8,b6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%6(b4!7,b2!8,r~0).M(b2!8,b6,a6!+) \
+ iGnT MM(kf13,Km13*factor_Km13_2) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%8(b4!7,b2!8,r~0).M(b2!8,b6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%6(b4!7,b2!8,r~0).M(b2!8,b6,a6!+) \
+ iGnT MM(kf13,Km13*factor_Km13_2) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%8(b4!7,b2!8,r~0).M(b2!8,b6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%6(b4!7,b2!8,r~0).M(b2!8,b6,a6!+) \
+ iGnT MM(kf13,Km13*factor_Km13_2) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%8(b4!7,b2!8,r~0).M(b2!8,b6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b3!6).A%7(b3!6,b4!7).GN%6(b4!7,b2!8,r~0).M(b2!8,b6,a6!+) \
+ iGnT MM(kf13,Km13*factor_Km13_2) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%8(b4!7,b2!8,r~0).M(b2!8,b6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%6(b4!7,b2!8,r~0).M(b2!8,b6,a6!+) \
+ iGnT MM(kf13,Km13*factor_Km13_2) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%8(b4!7,b2!8,r~0).M(b2!8,b6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b3!4).A%5(b3!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%6(b4!7,b2!8,r~0).M(b2!8,b6,a6!+) \
+ iGnT MM(kf13,Km13*factor_Km13_2) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%8(b4!7,b2!8,r~0).M(b2!8,b6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b3!2,a3,a4,a6,b2,b3,b4,b6,r~0).A%3(b3!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%6(b4!7,b2!8,r~0).M(b2!8,b6,a6!+) \
+ iGnT MM(kf13,Km13*factor_Km13_2) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

A%1(a2,a3,a6,b3~n,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%8(b4!7,b2!8,r~0).M(b2!8,b6,a6!+) + iGnT -> \
GN(a3,a4,a6,b2,b3!9,b3,b4,b4,b6,r~0).A%1(a2,a3,a6,b3~l!9,b4!1,b6).GN%2(b4!1,b6!2,a3,a4,a6,b2,b3,b3,b4,r~0).A%3(b6!2,b4!3).GN%4(b4!3,b6!4).A%5(b6!4,b4!5).GN%6(b4!5,b6!6).A%7(b6!6,b4!7).GN%6(b4!7,b2!8,r~0).M(b2!8,b6,a6!+) \
+ iGnT MM(kf13,Km13*factor_Km13_2) exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b4!4).M(a3!3,b4!4).M(a3!3,b4!+)) \
exclude_products(1,GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!1,b4!2,b6).GN(b4!2,b2!4).M(a3!3,b2!4).M(a3!3,b4!+))

#Rule 14
#### Branch 1: *_GNb2|Ma3
# additional multiplier (is not presented in the article)
GN(a3,a4,a6,b2!1,b3,b3,b4,b4,b6,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2!1,b3,b3,b4,b4!2,b6,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_6) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
exclude_reactants(1,A(b4!+))

# without multipliers
GN(a3,a4,a6,b2!1,b3,b3,b4,b4,b6,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2!1,b3,b3,b4,b4!2,b6,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
include_reactants(1,A(b4!+))

GN%1(a3,a4,a6,b2,b3,b3!3,b4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3!3,b4!4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

# additional multipliers (type 1)
GN(a3,a4,a6,b2!1,b3,b3,b4,b4,b6,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2!1,b3,b3,b4,b4!2,b6,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_6) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+)) \
exclude_reactants(1,A(b4!+))

GN(a3,a4,a6,b2!1,b3,b3,b4,b4,b6,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2!1,b3,b3,b4,b4!2,b6,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+)) \
include_reactants(1,A(b4!+))

GN%1(a3,a4,a6,b2,b3,b3!3,b4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3!3,b4!4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

# additional multipliers (type 2)
GN(a3,a4,a6,b2!1,b3,b3,b4,b4,b6,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2!1,b3,b3,b4,b4!2,b6,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_6) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
exclude_reactants(1,A(b4!+))

GN(a3,a4,a6,b2!1,b3,b3,b4,b4,b6,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2!1,b3,b3,b4,b4!2,b6,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
include_reactants(1,A(b4!+))

GN%1(a3,a4,a6,b2,b3,b3!3,b4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3!3,b4!4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

#### Branch 2: *_GNb4)Ma3, adjustment 17
GN(a3,a4,a6,b2,b3,b3,b4%1!1,b4,b6,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2,b3,b3,b4%1!1,b4!2,b6,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_6) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
exclude_reactants(1,A(b4!+))

GN(a3,a4,a6,b2,b3,b3,b4%1!1,b4,b6,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2,b3,b3,b4%1!1,b4!2,b6,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
include_reactants(1,A(b4!+))

GN%1(a3,a4,a6,b2,b3,b3!3,b4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3!3,b4!4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

# additional multipliers (type 1)
GN(a3,a4,a6,b2,b3,b3,b4%1!1,b4,b6,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2,b3,b3,b4!2,b4%1!1,b6,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_5*factor_Km14_6) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+)) \
exclude_reactants(1,A(b4!+))

GN(a3,a4,a6,b2,b3,b3,b4%1!1,b4,b6,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2,b3,b3,b4!2,b4%1!1,b6,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+)) \
include_reactants(1,A(b4!+))

GN%1(a3,a4,a6,b2,b3,b3!3,b4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3!3,b4!4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_5) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_5*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(b2!1).M(b2!1,a6!+))

# additional multipliers (type 2)
GN(a3,a4,a6,b2,b3,b3,b4%1!1,b4,b6,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2,b3,b3,b4!2,b4%1!1,b6,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_4*factor_Km14_6) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
exclude_reactants(1,A(b4!+))

GN(a3,a4,a6,b2,b3,b3,b4%1!1,b4,b6,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2,b3,b3,b4!2,b4%1!1,b6,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
include_reactants(1,A(b4!+))

GN%1(a3,a4,a6,b2,b3,b3!3,b4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3!3,b4!4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_3*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b4!1,r~0).M(b4!1,a3!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_3) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(b2!1).M(b2!1,a6!+)) include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

#### Branch 3: *_GNb2|Ma6, adjustment 16, additional multipliers of type 1 must be ignored
GN(a3,a4,a6,b2!1,b3,b3,b4,b4,b6,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2!1,b3,b3,b4,b4!2,b6,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_6) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
exclude_reactants(1,A(b4!+))

GN(a3,a4,a6,b2!1,b3,b3,b4,b4,b6,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2!1,b3,b3,b4,b4!2,b6,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
include_reactants(1,A(b4!+))

GN%1(a3,a4,a6,b2,b3,b3!3,b4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3!3,b4!4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

# additional multipliers (type 2)
GN(a3,a4,a6,b2!1,b3,b3,b4,b4,b6,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2!1,b3,b3,b4,b4!2,b6,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_4*factor_Km14_6) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
exclude_reactants(1,A(b4!+))

GN(a3,a4,a6,b2!1,b3,b3,b4,b4,b6,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2!1,b3,b3,b4,b4!2,b6,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
include_reactants(1,A(b4!+))

GN%1(a3,a4,a6,b2,b3,b3!3,b4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3!3,b4!4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_2*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b2!1,r~0).M(b2!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_2) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

#### Branch 4: *_GNb6)Ma6, adjustment 15, additional multipliers of type 1 must be ignored
GN(a3,a4,a6,b2,b3,b3,b4,b4,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2,b3,b3,b4,b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_6) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
exclude_reactants(1,A(b4!+))

GN(a3,a4,a6,b2,b3,b3,b4,b4,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2,b3,b3,b4,b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
include_reactants(1,A(b4!+))

GN%1(a3,a4,a6,b2,b3,b3!3,b4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3!3,b4!4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
exclude_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

# additional multipliers (type 2)
GN(a3,a4,a6,b2,b3,b3,b4,b4,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2,b3,b3,b4,b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_4*factor_Km14_6) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
exclude_reactants(1,A(b4!+))

GN(a3,a4,a6,b2,b3,b3,b4,b4,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!2,b6).GN(a3,a4,a6,b2,b3,b3,b4,b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+)) \
include_reactants(1,A(b4!+))

GN%1(a3,a4,a6,b2,b3,b3!3,b4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3!3,b4!4,b4,b6,r~0).A%2(b3!3,b4!2).GN%3(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!4,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!4,b4,b6!3,r~0).A%2(b6!3,b4!2).GN%3(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b3!3,r~0).A%4(b3!3,b4!2).GN%5(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!5,b4,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3!5,b4!6,b4,b6,r~0).A%2(b3!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!6,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!6,b4,b6!5,r~0).A%2(b6!5,b4!4).GN%3(b4!4,b6!3,r~0).A%4(b6!3,b4!2).GN%5(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b3!3,r~0).A%6(b3!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b3!5,r~0).A%4(b3!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!7,b4,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3!7,b4!8,b4,b6,r~0).A%2(b3!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!8,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!8,b4,b6!7,r~0).A%2(b6!7,b4!6).GN%3(b4!6,b6!5,r~0).A%4(b6!5,b4!4).GN%5(b4!4,b6!3,r~0).A%6(b6!3,b4!2).GN%7(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_1*factor_Km14_4) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b3!3,r~0).A%8(b3!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b3!5,r~0).A%6(b3!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b3!7,r~0).A%4(b3!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3!9,b4,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3!9,b4!10,b4,b6,r~0).A%2(b3!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

GN%1(a3,a4,a6,b2,b3,b3,b4,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT -> \
A(a2,a3,a6,b3~n,b4!10,b6).GN%1(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!9,r~0).A%2(b6!9,b4!8).GN%3(b4!8,b6!7,r~0).A%4(b6!7,b4!6).GN%5(b4!6,b6!5,r~0).A%6(b6!5,b4!4).GN%7(b4!4,b6!3,r~0).A%8(b6!3,b4!2).GN%9(b4!2,b6!1,r~0).M(b6!1,a6!+) + b4GalT MM(kf14,Km14*factor_Km14_4*factor_Km14_1) \
exclude_products(1,A(a2,a3,a6,b3,b4!3,b6).GN(a3,a4,a6,b2,b3,b3,b4!3,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+)) \
include_reactants(1,GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6).M(a3!2).M(a6!3).M(a3!2,a6!3,b4!1,b4!+))

#Rule 15
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3!+,a4,a6,b2,b3,b3,b4,b6,r~0) + a3SiaT -> \
NN(a3!1,a6).A(a2,a3!1,a6,b3,b4!2,b6).GN(b4!2,a3!+,a4,a6,b2,b3,b3,b4,b6,r~0) + a3SiaT MM(kf15,Km15) exclude_reactants(1,NN.NN)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4!+,a6,b2,b3,b3,b4,b6,r~0) + a3SiaT -> \
NN(a3!1,a6).A(a2,a3!1,a6,b3,b4!2,b6).GN(b4!2,a3,a4!+,a6,b2,b3,b3,b4,b6,r~0) + a3SiaT MM(kf15,Km15) exclude_reactants(1,NN.NN)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4,a6!+,b2,b3,b3,b4,b6,r~0) + a3SiaT -> \
NN(a3!1,a6).A(a2,a3!1,a6,b3,b4!2,b6).GN(b4!2,a3,a4,a6!+,b2,b3,b3,b4,b6,r~0) + a3SiaT MM(kf15,Km15) exclude_reactants(1,NN.NN)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4,a6,b2!+,b3,b3,b4,b6,r~0) + a3SiaT -> \
NN(a3!1,a6).A(a2,a3!1,a6,b3,b4!2,b6).GN(b4!2,a3,a4,a6,b2!+,b3,b3,b4,b6,r~0) + a3SiaT MM(kf15,Km15) exclude_reactants(1,NN.NN)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4,a6,b2,b3!+,b3,b4,b6,r~0) + a3SiaT -> \
NN(a3!1,a6).A(a2,a3!1,a6,b3,b4!2,b6).GN(b4!2,a3,a4,a6,b2,b3!+,b3,b4,b6,r~0) + a3SiaT MM(kf15,Km15) exclude_reactants(1,NN.NN)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4,a6,b2,b3,b3,b4!+,b6,r~0) + a3SiaT -> \
NN(a3!1,a6).A(a2,a3!1,a6,b3,b4!2,b6).GN(b4!2,a3,a4,a6,b2,b3,b3,b4!+,b6,r~0) + a3SiaT MM(kf15,Km15) exclude_reactants(1,NN.NN)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4,a6,b2,b3,b3,b4,b6!+,r~0) + a3SiaT -> \
NN(a3!1,a6).A(a2,a3!1,a6,b3,b4!2,b6).GN(b4!2,a3,a4,a6,b2,b3,b3,b4,b6!+,r~0) + a3SiaT MM(kf15,Km15) exclude_reactants(1,NN.NN)
#additional multipliers
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3!+,a4,a6,b2,b3,b3,b4,b6,r~0) + a3SiaT -> \
NN(a3!1,a6).A(a2,a3!1,a6,b3,b4!2,b6).GN(b4!2,a3!+,a4,a6,b2,b3,b3,b4,b6,r~0) + a3SiaT MM(kf15,Km15*factor_Km15) include_reactants(1,NN.NN)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4!+,a6,b2,b3,b3,b4,b6,r~0) + a3SiaT -> \
NN(a3!1,a6).A(a2,a3!1,a6,b3,b4!2,b6).GN(b4!2,a3,a4!+,a6,b2,b3,b3,b4,b6,r~0) + a3SiaT MM(kf15,Km15*factor_Km15) include_reactants(1,NN.NN)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4,a6!+,b2,b3,b3,b4,b6,r~0) + a3SiaT -> \
NN(a3!1,a6).A(a2,a3!1,a6,b3,b4!2,b6).GN(b4!2,a3,a4,a6!+,b2,b3,b3,b4,b6,r~0) + a3SiaT MM(kf15,Km15*factor_Km15) include_reactants(1,NN.NN)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4,a6,b2!+,b3,b3,b4,b6,r~0) + a3SiaT -> \
NN(a3!1,a6).A(a2,a3!1,a6,b3,b4!2,b6).GN(b4!2,a3,a4,a6,b2!+,b3,b3,b4,b6,r~0) + a3SiaT MM(kf15,Km15*factor_Km15) include_reactants(1,NN.NN)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4,a6,b2,b3!+,b3,b4,b6,r~0) + a3SiaT -> \
NN(a3!1,a6).A(a2,a3!1,a6,b3,b4!2,b6).GN(b4!2,a3,a4,a6,b2,b3!+,b3,b4,b6,r~0) + a3SiaT MM(kf15,Km15*factor_Km15) include_reactants(1,NN.NN)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4,a6,b2,b3,b3,b4!+,b6,r~0) + a3SiaT -> \
NN(a3!1,a6).A(a2,a3!1,a6,b3,b4!2,b6).GN(b4!2,a3,a4,a6,b2,b3,b3,b4!+,b6,r~0) + a3SiaT MM(kf15,Km15*factor_Km15) include_reactants(1,NN.NN)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4,a6,b2,b3,b3,b4,b6!+,r~0) + a3SiaT -> \
NN(a3!1,a6).A(a2,a3!1,a6,b3,b4!2,b6).GN(b4!2,a3,a4,a6,b2,b3,b3,b4,b6!+,r~0) + a3SiaT MM(kf15,Km15*factor_Km15) include_reactants(1,NN.NN)

#Rule 16
A%1(a2,a3,a6,b3,b4!1,b6).GN%2(a3,a4,a6,b2,b3!2,b3,b4,b4!1,b6).A%3(a2,a3,a6,b3!2,b4!+,b6) + IGnT -> \
A%1(a2,a3,a6,b3,b4!1,b6).GN%2(a3,a4,a6,b2,b3!2,b3,b4,b4!1,b6).GN(a3,a4,a6,b2,b3,b3,b4,b4,b6!3,r~0).A%3(a2,a3,a6,b3!2,b4!+,b6!3) \
+ IGnT MM(kf16,Km16)

#Rule 17
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3!+,a4,a6,b2,b3,b3,b4,b6,r~0) + a6SiaT -> \
NN(a3,a6!1).A(a2,a3,a6!1,b3,b4!2,b6).GN(b4!2,a3!+,a4,a6,b2,b3,b3,b4,b6,r~0) + a6SiaT MM(kf17,Km17)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4!+,a6,b2,b3,b3,b4,b6,r~0) + a6SiaT -> \
NN(a3,a6!1).A(a2,a3,a6!1,b3,b4!2,b6).GN(b4!2,a3,a4!+,a6,b2,b3,b3,b4,b6,r~0) + a6SiaT MM(kf17,Km17)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4,a6!+,b2,b3,b3,b4,b6,r~0) + a6SiaT -> \
NN(a3,a6!1).A(a2,a3,a6!1,b3,b4!2,b6).GN(b4!2,a3,a4,a6!+,b2,b3,b3,b4,b6,r~0) + a6SiaT MM(kf17,Km17)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4,a6,b2!+,b3,b3,b4,b6,r~0) + a6SiaT -> \
NN(a3,a6!1).A(a2,a3,a6!1,b3,b4!2,b6).GN(b4!2,a3,a4,a6,b2!+,b3,b3,b4,b6,r~0) + a6SiaT MM(kf17,Km17)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4,a6,b2,b3,b3!+,b4,b6,r~0) + a6SiaT -> \
NN(a3,a6!1).A(a2,a3,a6!1,b3,b4!2,b6).GN(b4!2,a3,a4,a6,b2,b3!+,b3,b4,b6,r~0) + a6SiaT MM(kf17,Km17)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4,a6,b2,b3,b3,b4!+,b6,r~0) + a6SiaT -> \
NN(a3,a6!1).A(a2,a3,a6!1,b3,b4!2,b6).GN(b4!2,a3,a4,a6,b2,b3,b3,b4!+,b6,r~0) + a6SiaT MM(kf17,Km17)
A(a2,a3,a6,b3,b4!1,b6).GN(b4!1,a3,a4,a6,b2,b3,b3,b4,b6!+,r~0) + a6SiaT -> \
NN(a3,a6!1).A(a2,a3,a6!1,b3,b4!2,b6).GN(b4!2,a3,a4,a6,b2,b3,b3,b4,b6!+,r~0) + a6SiaT MM(kf17,Km17)

#Rule 18
GN(a3!+,a4,a6,b2,b3,b3,b4,b4,b6,r~0) + b3GalT -> \
A(a2,a3,a6,b3~r!1,b4,b6).GN(a3!+,a4,a6,b2,b3!1,b3,b4,b4,b6,r~0) + b3GalT MM(kf18,Km18) \
exclude_products(1,A(a2,a3,a6,b3~r!3,b4,b6).GN(a3,a4,a6,b2,b3!3,b3,b4,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+))
GN(a3,a4!+,a6,b2,b3,b3,b4,b4,b6,r~0) + b3GalT -> \
A(a2,a3,a6,b3~r!1,b4,b6).GN(a3,a4!+,a6,b2,b3!1,b3,b4,b4,b6,r~0) + b3GalT MM(kf18,Km18) \
exclude_products(1,A(a2,a3,a6,b3~r!3,b4,b6).GN(a3,a4,a6,b2,b3!3,b3,b4,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+))
GN(a3,a4,a6!+,b2,b3,b3,b4,b4,b6,r~0) + b3GalT -> \
A(a2,a3,a6,b3~r!1,b4,b6).GN(a3,a4,a6!+,b2,b3!1,b3,b4,b4,b6,r~0) + b3GalT MM(kf18,Km18) \
exclude_products(1,A(a2,a3,a6,b3~r!3,b4,b6).GN(a3,a4,a6,b2,b3!3,b3,b4,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+))
GN(a3,a4,a6,b2!+,b3,b3,b4,b4,b6,r~0) + b3GalT -> \
A(a2,a3,a6,b3~r!1,b4,b6).GN(a3,a4,a6,b2!+,b3!1,b3,b4,b4,b6,r~0) + b3GalT MM(kf18,Km18) \
exclude_products(1,A(a2,a3,a6,b3~r!3,b4,b6).GN(a3,a4,a6,b2,b3!3,b3,b4,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+))
GN(a3,a4,a6,b2,b3!+,b3,b4,b4,b6,r~0) + b3GalT -> \
A(a2,a3,a6,b3~r!1,b4,b6).GN(a3,a4,a6,b2,b3!1,b3!+,b4,b4,b6,r~0) + b3GalT MM(kf18,Km18) \
exclude_products(1,A(a2,a3,a6,b3~r!3,b4,b6).GN(a3,a4,a6,b2,b3!3,b3,b4,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+))
GN(a3,a4,a6,b2,b3,b3,b4!+,b4,b6,r~0) + b3GalT -> \
A(a2,a3,a6,b3~r!1,b4,b6).GN(a3,a4,a6,b2,b3!1,b3,b4!+,b4,b6,r~0) + b3GalT MM(kf18,Km18) \
exclude_products(1,A(a2,a3,a6,b3~r!3,b4,b6).GN(a3,a4,a6,b2,b3!3,b3,b4,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+))
GN(a3,a4,a6,b2,b3,b3,b4,b4,b6!+,r~0) + b3GalT -> \
A(a2,a3,a6,b3~r!1,b4,b6).GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6!+,r~0) + b3GalT MM(kf18,Km18) \
exclude_products(1,A(a2,a3,a6,b3~r!3,b4,b6).GN(a3,a4,a6,b2,b3!3,b3,b4,b4!1,b6).M(a6!2).M(a6!2,b4!1,b4!+))

#Rule 20
A(b3~r!1).GN(a4,b2!+,b3!1) + FucTLe -> \
A(b3~r!1).F(a2,a3,a4!2,a6).GN(a4!2,b2!+,b3!1) + FucTLe MM(kf20,Km20) \
exclude_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1)) exclude_reactants(1,NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!1))
A(b3~r!1).GN(a4,b3!+,b3!1) + FucTLe -> \
A(b3~r!1).F(a2,a3,a4!2,a6).GN(a4!2,b3!+,b3!1) + FucTLe MM(kf20,Km20) \
exclude_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1)) exclude_reactants(1,NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!1))
A(b3~r!1).GN(a4,b4!+,b3!1) + FucTLe -> \
A(b3~r!1).F(a2,a3,a4!2,a6).GN(a4!2,b4!+,b3!1) + FucTLe MM(kf20,Km20) \
exclude_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1)) exclude_reactants(1,NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!1))
A(b3~r!1).GN(a4,b6!+,b3!1) + FucTLe -> \
A(b3~r!1).F(a2,a3,a4!2,a6).GN(a4!2,b6!+,b3!1) + FucTLe MM(kf20,Km20) \
exclude_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1)) exclude_reactants(1,NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!1))

# without multipliers but contains special branch(es) (which stay unchanged)
# contains 1 special branch
A(b3~r!1).GN(a4,b2!+,b3!1) + FucTLe -> \
A(b3~r!1).F(a2,a3,a4!2,a6).GN(a4!2,b2!+,b3!1) + FucTLe MM(kf20,Km20) \
exclude_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).F(a2!3).A(a2!3,a3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
exclude_reactants(1,NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
exclude_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
include_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1),NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
include_products(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1),NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4))

A(b3~r!1).GN(a4,b3!+,b3!1) + FucTLe -> \
A(b3~r!1).F(a2,a3,a4!2,a6).GN(a4!2,b3!+,b3!1) + FucTLe MM(kf20,Km20) \
exclude_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).F(a2!3).A(a2!3,a3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
exclude_reactants(1,NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
exclude_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
include_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1),NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
include_products(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1),NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4))

A(b3~r!1).GN(a4,b4!+,b3!1) + FucTLe -> \
A(b3~r!1).F(a2,a3,a4!2,a6).GN(a4!2,b4!+,b3!1) + FucTLe MM(kf20,Km20) \
exclude_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).F(a2!3).A(a2!3,a3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
exclude_reactants(1,NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
exclude_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
include_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1),NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
include_products(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1),NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4))

A(b3~r!1).GN(a4,b6!+,b3!1) + FucTLe -> \
A(b3~r!1).F(a2,a3,a4!2,a6).GN(a4!2,b6!+,b3!1) + FucTLe MM(kf20,Km20) \
exclude_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).F(a2!3).A(a2!3,a3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
exclude_reactants(1,NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
exclude_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
include_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1),NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
include_products(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1),NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4))

# contains 2 special branches
A(b3~r!1).GN(a4,b2!+,b3!1) + FucTLe -> \
A(b3~r!1).F(a2,a3,a4!2,a6).GN(a4!2,b2!+,b3!1) + FucTLe MM(kf20,Km20) \
include_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).F(a2!3).A(a2!3,a3,a6,b3~r!4,b4,b6).GN(a4,b3!4),NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4),F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
include_products(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).F(a2!3).A(a2!3,a3,a6,b3~r!4,b4,b6).GN(a4,b3!4),NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4),F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4))

A(b3~r!1).GN(a4,b3!+,b3!1) + FucTLe -> \
A(b3~r!1).F(a2,a3,a4!2,a6).GN(a4!2,b3!+,b3!1) + FucTLe MM(kf20,Km20) \
include_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).F(a2!3).A(a2!3,a3,a6,b3~r!4,b4,b6).GN(a4,b3!4),NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4),F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
include_products(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).F(a2!3).A(a2!3,a3,a6,b3~r!4,b4,b6).GN(a4,b3!4),NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4),F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4))

A(b3~r!1).GN(a4,b4!+,b3!1) + FucTLe -> \
A(b3~r!1).F(a2,a3,a4!2,a6).GN(a4!2,b4!+,b3!1) + FucTLe MM(kf20,Km20) \
include_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).F(a2!3).A(a2!3,a3,a6,b3~r!4,b4,b6).GN(a4,b3!4),NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4),F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
include_products(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).F(a2!3).A(a2!3,a3,a6,b3~r!4,b4,b6).GN(a4,b3!4),NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4),F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4))

A(b3~r!1).GN(a4,b6!+,b3!1) + FucTLe -> \
A(b3~r!1).F(a2,a3,a4!2,a6).GN(a4!2,b6!+,b3!1) + FucTLe MM(kf20,Km20) \
include_reactants(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).F(a2!3).A(a2!3,a3,a6,b3~r!4,b4,b6).GN(a4,b3!4),NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4),F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4)) \
include_products(1,F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).F(a2!3).A(a2!3,a3,a6,b3~r!4,b4,b6).GN(a4,b3!4),NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4),F(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!1).NN(a3!3).A(a2,a3!3,a6,b3~r!4,b4,b6).GN(a4,b3!4))

# additional multipliers 1 (special branch type 1)
F%1(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b2!+,b3!1) + FucTLe -> \
F%1(a2!3).A(a2!3,a3,a6,b3~r!1,b4,b6).F(a2,a3,a4!2,a6).GN(a4!2,b2!+,b3!1) + FucTLe MM(kf20*factor_kf20_1,Km20*factor_Km20_1)
F%1(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b3!+,b3!1) + FucTLe -> \
F%1(a2!3).A(a2!3,a3,a6,b3~r!1,b4,b6).F(a2,a3,a4!2,a6).GN(a4!2,b3!+,b3!1) + FucTLe MM(kf20*factor_kf20_1,Km20*factor_Km20_1)
F%1(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b4!+,b3!1) + FucTLe -> \
F%1(a2!3).A(a2!3,a3,a6,b3~r!1,b4,b6).F(a2,a3,a4!2,a6).GN(a4!2,b4!+,b3!1) + FucTLe MM(kf20*factor_kf20_1,Km20*factor_Km20_1)
F%1(a2!2).A(a2!2,a3,a6,b3~r!1,b4,b6).GN(a4,b6!+,b3!1) + FucTLe -> \
F%1(a2!3).A(a2!3,a3,a6,b3~r!1,b4,b6).F(a2,a3,a4!2,a6).GN(a4!2,b6!+,b3!1) + FucTLe MM(kf20*factor_kf20_1,Km20*factor_Km20_1)

# additional multipliers 2 (special branch type 2)
NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b2!+,b3!1) + FucTLe -> \
NN(a3!3).A(a2,a3!3,a6,b3~r!1,b4,b6).F(a2,a3,a4!2,a6).GN(a4!2,b2!+,b3!1) + FucTLe MM(kf20*factor_kf20_2,Km20*factor_Km20_2)
NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b3!+,b3!1) + FucTLe -> \
NN(a3!3).A(a2,a3!3,a6,b3~r!1,b4,b6).F(a2,a3,a4!2,a6).GN(a4!2,b3!+,b3!1) + FucTLe MM(kf20*factor_kf20_2,Km20*factor_Km20_2)
NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b4!+,b3!1) + FucTLe -> \
NN(a3!3).A(a2,a3!3,a6,b3~r!1,b4,b6).F(a2,a3,a4!2,a6).GN(a4!2,b4!+,b3!1) + FucTLe MM(kf20*factor_kf20_2,Km20*factor_Km20_2)
NN(a3!2).A(a2,a3!2,a6,b3~r!1,b4,b6).GN(a4,b6!+,b3!1) + FucTLe -> \
NN(a3!3).A(a2,a3!3,a6,b3~r!1,b4,b6).F(a2,a3,a4!2,a6).GN(a4!2,b6!+,b3!1) + FucTLe MM(kf20*factor_kf20_2,Km20*factor_Km20_2)

#Rule 21
A(b4!1).GN(a3,a4,a6,b2!+,b3,b3,b4,b4!1,b6) + FucTLe -> \
F(a2,a3!1,a4,a6).A(b4!2).GN(a3!1,a4,a6,b2!+,b3,b3,b4,b4!2,b6) + FucTLe MM(kf21,Km21) \
exclude_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1)) \
exclude_reactants(1,NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1))
A(b4!1).GN(a3,a4,a6,b2,b3!+,b3,b4,b4!1,b6) + FucTLe -> \
F(a2,a3!1,a4,a6).A(b4!2).GN(a3!1,a4,a6,b2,b3!+,b3,b4,b4!2,b6) + FucTLe MM(kf21,Km21) \
exclude_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1)) \
exclude_reactants(1,NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1))
A(b4!1).GN(a3,a4,a6,b2,b3,b3,b4!+,b4!1,b6) + FucTLe -> \
F(a2,a3!1,a4,a6).A(b4!2).GN(a3!1,a4,a6,b2,b3,b3,b4!+,b4!2,b6) + FucTLe MM(kf21,Km21) \
exclude_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1)) \
exclude_reactants(1,NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1))
A(b4!1).GN(a3,a4,a6,b2,b3,b3,b4,b4!1,b6!+) + FucTLe -> \
F(a2,a3!1,a4,a6).A(b4!2).GN(a3!1,a4,a6,b2,b3,b3,b4,b4!2,b6!+) + FucTLe MM(kf21,Km21) \
exclude_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1)) \
exclude_reactants(1,NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1))

# without multipliers but contains special branch(es) (which stay unchanged)
# contains 1 special branch
A(b4!1).GN(a3,a4,a6,b2!+,b3,b3,b4,b4!1,b6) + FucTLe -> \
F(a2,a3!1,a4,a6).A(b4!2).GN(a3!1,a4,a6,b2!+,b3,b3,b4,b4!2,b6) + FucTLe MM(kf21,Km21) \
exclude_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).F(a2!4,a3,a4,a6).A(a2!4,a3,a6,b3,b4!3,b6).GN(a3,b4!3)) \
exclude_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3)) \
exclude_reactants(1,NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3)) \
include_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1),NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1)) \
include_products(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1),NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1))

A(b4!1).GN(a3,a4,a6,b2,b3!+,b3,b4,b4!1,b6) + FucTLe -> \
F(a2,a3!1,a4,a6).A(b4!2).GN(a3!1,a4,a6,b2,b3!+,b3,b4,b4!2,b6) + FucTLe MM(kf21,Km21) \
exclude_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).F(a2!4,a3,a4,a6).A(a2!4,a3,a6,b3,b4!3,b6).GN(a3,b4!3)) \
exclude_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3)) \
exclude_reactants(1,NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3)) \
include_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1),NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1)) \
include_products(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1),NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1))

A(b4!1).GN(a3,a4,a6,b2,b3,b3,b4!+,b4!1,b6) + FucTLe -> \
F(a2,a3!1,a4,a6).A(b4!2).GN(a3!1,a4,a6,b2,b3,b3,b4!+,b4!2,b6) + FucTLe MM(kf21,Km21) \
exclude_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).F(a2!4,a3,a4,a6).A(a2!4,a3,a6,b3,b4!3,b6).GN(a3,b4!3)) \
exclude_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3)) \
exclude_reactants(1,NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3)) \
include_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1),NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1)) \
include_products(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1),NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1))

A(b4!1).GN(a3,a4,a6,b2,b3,b3,b4,b4!1,b6!+) + FucTLe -> \
F(a2,a3!1,a4,a6).A(b4!2).GN(a3!1,a4,a6,b2,b3,b3,b4,b4!2,b6!+) + FucTLe MM(kf21,Km21) \
exclude_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).F(a2!4,a3,a4,a6).A(a2!4,a3,a6,b3,b4!3,b6).GN(a3,b4!3)) \
exclude_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3)) \
exclude_reactants(1,NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3)) \
include_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1),NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1)) \
include_products(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1),NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1))

# contains 2 special branches
A(b4!1).GN(a3,a4,a6,b2!+,b3,b3,b4,b4!1,b6) + FucTLe -> \
F(a2,a3!1,a4,a6).A(b4!2).GN(a3!1,a4,a6,b2!+,b3,b3,b4,b4!2,b6) + FucTLe MM(kf21,Km21) \
include_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).F(a2!4,a3,a4,a6).A(a2!4,a3,a6,b3,b4!3,b6).GN(a3,b4!3),F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3),NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3)) \
include_products(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).F(a2!4,a3,a4,a6).A(a2!4,a3,a6,b3,b4!3,b6).GN(a3,b4!3),F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3),NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3))

A(b4!1).GN(a3,a4,a6,b2,b3!+,b3,b4,b4!1,b6) + FucTLe -> \
F(a2,a3!1,a4,a6).A(b4!2).GN(a3!1,a4,a6,b2,b3!+,b3,b4,b4!2,b6) + FucTLe MM(kf21,Km21) \
include_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).F(a2!4,a3,a4,a6).A(a2!4,a3,a6,b3,b4!3,b6).GN(a3,b4!3),F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3),NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3)) \
include_products(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).F(a2!4,a3,a4,a6).A(a2!4,a3,a6,b3,b4!3,b6).GN(a3,b4!3),F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3),NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3))

A(b4!1).GN(a3,a4,a6,b2,b3,b3,b4!+,b4!1,b6) + FucTLe -> \
F(a2,a3!1,a4,a6).A(b4!2).GN(a3!1,a4,a6,b2,b3,b3,b4!+,b4!2,b6) + FucTLe MM(kf21,Km21) \
include_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).F(a2!4,a3,a4,a6).A(a2!4,a3,a6,b3,b4!3,b6).GN(a3,b4!3),F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3),NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3)) \
include_products(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).F(a2!4,a3,a4,a6).A(a2!4,a3,a6,b3,b4!3,b6).GN(a3,b4!3),F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3),NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3))

A(b4!1).GN(a3,a4,a6,b2,b3,b3,b4,b4!1,b6!+) + FucTLe -> \
F(a2,a3!1,a4,a6).A(b4!2).GN(a3!1,a4,a6,b2,b3,b3,b4,b4!2,b6!+) + FucTLe MM(kf21,Km21) \
include_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).F(a2!4,a3,a4,a6).A(a2!4,a3,a6,b3,b4!3,b6).GN(a3,b4!3),F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3),NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3)) \
include_products(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).F(a2!4,a3,a4,a6).A(a2!4,a3,a6,b3,b4!3,b6).GN(a3,b4!3),F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3),NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,b4!1).NN(a3!4,a6).A(a2,a3!4,a6,b3,b4!3,b6).GN(a3,b4!3))

# additional multipliers 1 (special branch type 1)
F%1(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,a4,a6,b2!+,b3,b3,b4,b4!1,b6) + FucTLe -> \
F(a2,a3!1,a4,a6).F%1(a2!3,a3,a4,a6).A(a2!3,a3,a6,b3,b4!2,b6).GN(a3!1,a4,a6,b2!+,b3,b3,b4,b4!2,b6) + FucTLe MM(kf21,Km21*factor_Km21_1)
F%1(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,a4,a6,b2,b3!+,b3,b4,b4!1,b6) + FucTLe -> \
F(a2,a3!1,a4,a6).F%1(a2!3,a3,a4,a6).A(a2!3,a3,a6,b3,b4!2,b6).GN(a3!1,a4,a6,b2,b3!+,b3,b4,b4!2,b6) + FucTLe MM(kf21,Km21*factor_Km21_1)
F%1(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,a4,a6,b2,b3,b3,b4!+,b4!1,b6) + FucTLe -> \
F(a2,a3!1,a4,a6).F%1(a2!3,a3,a4,a6).A(a2!3,a3,a6,b3,b4!2,b6).GN(a3!1,a4,a6,b2,b3,b3,b4!+,b4!2,b6) + FucTLe MM(kf21,Km21*factor_Km21_1)
F%1(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,a4,a6,b2,b3,b3,b4,b4!1,b6!+) + FucTLe -> \
F(a2,a3!1,a4,a6).F%1(a2!3,a3,a4,a6).A(a2!3,a3,a6,b3,b4!2,b6).GN(a3!1,a4,a6,b2,b3,b3,b4,b4!2,b6!+) + FucTLe MM(kf21,Km21*factor_Km21_1)
# additional multipliers 2 (special branch type 2)
NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,a4,a6,b2!+,b3,b3,b4,b4!1,b6) + FucTLe -> \
F(a2,a3!1,a4,a6).NN(a3!3,a6).A(a2,a3!3,a6,b3,b4!2,b6).GN(a3!1,a4,a6,b2!+,b3,b3,b4,b4!2,b6) + FucTLe MM(kf21,Km21*factor_Km21_2)
NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,a4,a6,b2,b3!+,b3,b4,b4!1,b6) + FucTLe -> \
F(a2,a3!1,a4,a6).NN(a3!3,a6).A(a2,a3!3,a6,b3,b4!2,b6).GN(a3!1,a4,a6,b2,b3!+,b3,b4,b4!2,b6) + FucTLe MM(kf21,Km21*factor_Km21_2)
NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,a4,a6,b2,b3,b3,b4!+,b4!1,b6) + FucTLe -> \
F(a2,a3!1,a4,a6).NN(a3!3,a6).A(a2,a3!3,a6,b3,b4!2,b6).GN(a3!1,a4,a6,b2,b3,b3,b4!+,b4!2,b6) + FucTLe MM(kf21,Km21*factor_Km21_2)
NN(a3!2,a6).A(a2,a3!2,a6,b3,b4!1,b6).GN(a3,a4,a6,b2,b3,b3,b4,b4!1,b6!+) + FucTLe -> \
F(a2,a3!1,a4,a6).NN(a3!3,a6).A(a2,a3!3,a6,b3,b4!2,b6).GN(a3!1,a4,a6,b2,b3,b3,b4,b4!2,b6!+) + FucTLe MM(kf21,Km21*factor_Km21_2)

#Rule 22
A(a2,a3,a6,b3!1,b4,b6).GN(a3,a4,a6,b2!+,b3!1,b3,b4,b4,b6) + FucTH -> \
F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3!1,b4,b6).GN(a3,a4,a6,b2!+,b3!1,b3,b4,b4,b6) + FucTH MM(kf22,Km22)
A(a2,a3,a6,b3!1,b4,b6).GN(a3,a4,a6,b2,b3!1,b3!+,b4,b4,b6) + FucTH -> \
F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3!1,b4,b6).GN(a3,a4,a6,b2,b3!1,b3!+,b4,b4,b6) + FucTH MM(kf22,Km22)
A(a2,a3,a6,b3!1,b4,b6).GN(a3,a4,a6,b2,b3!1,b3,b4,b4!+,b6) + FucTH -> \
F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3!1,b4,b6).GN(a3,a4,a6,b2,b3!1,b3,b4,b4!+,b6) + FucTH MM(kf22,Km22)
A(a2,a3,a6,b3!1,b4,b6).GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6!+) + FucTH -> \
F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3!1,b4,b6).GN(a3,a4,a6,b2,b3!1,b3,b4,b4,b6!+) + FucTH MM(kf22,Km22)

#Rule 23
A(a2,a3,a6,b3,b4!1,b6).GN(a3,a4,a6,b2!+,b3,b3,b4,b4!1,b6) + FucTH -> \
F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,a4,a6,b2!+,b3,b3,b4!1,b4,b6) + FucTH MM(kf23,Km23)
A(a2,a3,a6,b3,b4!1,b6).GN(a3,a4,a6,b2,b3!+,b3,b4,b4!1,b6) + FucTH -> \
F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,a4,a6,b2,b3!+,b3,b4!1,b4,b6) + FucTH MM(kf23,Km23)
A(a2,a3,a6,b3,b4!1,b6).GN(a3,a4,a6,b2,b3,b3,b4!+,b4!1,b6) + FucTH -> \
F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,a4,a6,b2,b3,b3,b4!+,b4!1,b6) + FucTH MM(kf23,Km23)
A(a2,a3,a6,b3,b4!1,b6).GN(a3,a4,a6,b2,b3,b3,b4,b4!1,b6!+) + FucTH -> \
F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3,b4!1,b6).GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6!+) + FucTH MM(kf23,Km23)

#Rule 24
A(b4!1).GN(a3,a4,a6,b2!+,b3,b3,b4,b4!1,b6) + a3FucT -> \
F(a2,a3!2,a4,a6).A(b4!1).GN(a3!2,a4,a6,b2!+,b3,b3,b4,b4!1,b6) + a3FucT MM(kf24,Km24) \
exclude_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!1,b6).GN(a3,b4!1))
A(b4!1).GN(a3,a4,a6,b2,b3!+,b3,b4,b4!1,b6) + a3FucT -> \
F(a2,a3!2,a4,a6).A(b4!1).GN(a3!2,a4,a6,b2,b3!+,b3,b4,b4!1,b6) + a3FucT MM(kf24,Km24) \
exclude_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!1,b6).GN(a3,b4!1))
A(b4!1).GN(a3,a4,a6,b2,b3,b3,b4!+,b4!1,b6) + a3FucT -> \
F(a2,a3!2,a4,a6).A(b4!1).GN(a3!2,a4,a6,b2,b3,b3,b4!+,b4!1,b6) + a3FucT MM(kf24,Km24) \
exclude_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!1,b6).GN(a3,b4!1))
A(b4!1).GN(a3,a4,a6,b2,b3,b3,b4,b4!1,b6!+) + a3FucT -> \
F(a2,a3!2,a4,a6).A(b4!1).GN(a3!2,a4,a6,b2,b3,b3,b4,b4!1,b6!+) + a3FucT MM(kf24,Km24) \
exclude_reactants(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!1,b6).GN(a3,b4!1))

# without multipliers but contains 1 given special branch
A(b4!1).GN(a3,a4,a6,b2!+,b3,b3,b4,b4!1,b6) + a3FucT -> \
F(a2,a3!2,a4,a6).A(b4!1).GN(a3!2,a4,a6,b2!+,b3,b3,b4,b4!1,b6) + a3FucT MM(kf24,Km24) \
exclude_reactants(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!3,b6).GN(a3,b4!3).F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!4,b6).GN(a3,b4!4)) \
include_reactants(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!2,b6).GN(a3,b4!2)) \
include_products(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!1,b6).GN(a3,b4!1))

A(b4!1).GN(a3,a4,a6,b2,b3!+,b3,b4,b4!1,b6) + a3FucT -> \
F(a2,a3!2,a4,a6).A(b4!1).GN(a3!2,a4,a6,b2,b3!+,b3,b4,b4!1,b6) + a3FucT MM(kf24,Km24) \
exclude_reactants(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!3,b6).GN(a3,b4!3).F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!4,b6).GN(a3,b4!4)) \
include_reactants(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!2,b6).GN(a3,b4!2)) \
include_products(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!1,b6).GN(a3,b4!1))

A(b4!1).GN(a3,a4,a6,b2,b3,b3,b4!+,b4!1,b6) + a3FucT -> \
F(a2,a3!2,a4,a6).A(b4!1).GN(a3!2,a4,a6,b2,b3,b3,b4!+,b4!1,b6) + a3FucT MM(kf24,Km24) \
exclude_reactants(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!3,b6).GN(a3,b4!3).F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!4,b6).GN(a3,b4!4)) \
include_reactants(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!2,b6).GN(a3,b4!2)) \
include_products(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!1,b6).GN(a3,b4!1))

A(b4!1).GN(a3,a4,a6,b2,b3,b3,b4,b4!1,b6!+) + a3FucT -> \
F(a2,a3!2,a4,a6).A(b4!1).GN(a3!2,a4,a6,b2,b3,b3,b4,b4!1,b6!+) + a3FucT MM(kf24,Km24) \
exclude_reactants(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!3,b6).GN(a3,b4!3).F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!4,b6).GN(a3,b4!4)) \
include_reactants(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!2,b6).GN(a3,b4!2)) \
include_products(1,F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!1,b6).GN(a3,b4!1))

# without multipliers but contains 2 given special branches
A(b4!1).GN(a3,a4,a6,b2!+,b3,b3,b4,b4!1,b6) + a3FucT -> \
F(a2,a3!2,a4,a6).A(b4!1).GN(a3!2,a4,a6,b2!+,b3,b3,b4,b4!1,b6) + a3FucT MM(kf24,Km24) \
exclude_reactants(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!3,b6).GN(a3,b4!3).F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!4,b6).GN(a3,b4!4).F(a2!5,a3,a4,a6).A(a2!5,a3,a6,b3~n,b4!6,b6).GN(a3,b4!6)) \
include_reactants(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!3,b6).GN(a3,b4!3).F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!4,b6).GN(a3,b4!4)) \
include_products(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!3,b6).GN(a3,b4!3).F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!4,b6).GN(a3,b4!4))

A(b4!1).GN(a3,a4,a6,b2,b3!+,b3,b4,b4!1,b6) + a3FucT -> \
F(a2,a3!2,a4,a6).A(b4!1).GN(a3!2,a4,a6,b2,b3!+,b3,b4,b4!1,b6) + a3FucT MM(kf24,Km24) \
exclude_reactants(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!3,b6).GN(a3,b4!3).F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!4,b6).GN(a3,b4!4).F(a2!5,a3,a4,a6).A(a2!5,a3,a6,b3~n,b4!6,b6).GN(a3,b4!6)) \
include_reactants(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!3,b6).GN(a3,b4!3).F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!4,b6).GN(a3,b4!4)) \
include_products(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!3,b6).GN(a3,b4!3).F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!4,b6).GN(a3,b4!4))

A(b4!1).GN(a3,a4,a6,b2,b3,b3,b4!+,b4!1,b6) + a3FucT -> \
F(a2,a3!2,a4,a6).A(b4!1).GN(a3!2,a4,a6,b2,b3,b3,b4!+,b4!1,b6) + a3FucT MM(kf24,Km24) \
exclude_reactants(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!3,b6).GN(a3,b4!3).F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!4,b6).GN(a3,b4!4).F(a2!5,a3,a4,a6).A(a2!5,a3,a6,b3~n,b4!6,b6).GN(a3,b4!6)) \
include_reactants(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!3,b6).GN(a3,b4!3).F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!4,b6).GN(a3,b4!4)) \
include_products(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!3,b6).GN(a3,b4!3).F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!4,b6).GN(a3,b4!4))

A(b4!1).GN(a3,a4,a6,b2,b3,b3,b4,b4!1,b6!+) + a3FucT -> \
F(a2,a3!2,a4,a6).A(b4!1).GN(a3!2,a4,a6,b2,b3,b3,b4,b4!1,b6!+) + a3FucT MM(kf24,Km24) \
exclude_reactants(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!3,b6).GN(a3,b4!3).F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!4,b6).GN(a3,b4!4).F(a2!5,a3,a4,a6).A(a2!5,a3,a6,b3~n,b4!6,b6).GN(a3,b4!6)) \
include_reactants(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!3,b6).GN(a3,b4!3).F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!4,b6).GN(a3,b4!4)) \
include_products(1,F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~n,b4!3,b6).GN(a3,b4!3).F(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!4,b6).GN(a3,b4!4))

# additional multipliers (add fucose on given special branch)
F%1(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!1,b6).GN(a3,a4,a6,b2!+,b3,b3,b4,b4!1,b6) + a3FucT -> \
F(a2,a3!2,a4,a6).F%1(a2!3,a3,a4,a6).A(a2!3,a3,a6,b3~n,b4!1,b6).GN(a3!2,a4,a6,b2!+,b3,b3,b4,b4!1,b6) + a3FucT MM(kf24*factor_kf24,Km24*factor_Km24)
F%1(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!1,b6).GN(a3,a4,a6,b2,b3!+,b3,b4,b4!1,b6) + a3FucT -> \
F(a2,a3!2,a4,a6).F%1(a2!3,a3,a4,a6).A(a2!3,a3,a6,b3~n,b4!1,b6).GN(a3!2,a4,a6,b2,b3!+,b3,b4,b4!1,b6) + a3FucT MM(kf24*factor_kf24,Km24*factor_Km24)
F%1(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!1,b6).GN(a3,a4,a6,b2,b3,b3,b4!+,b4!1,b6) + a3FucT -> \
F(a2,a3!2,a4,a6).F%1(a2!3,a3,a4,a6).A(a2!3,a3,a6,b3~n,b4!1,b6).GN(a3!2,a4,a6,b2,b3,b3,b4!+,b4!1,b6) + a3FucT MM(kf24*factor_kf24,Km24*factor_Km24)
F%1(a2!2,a3,a4,a6).A(a2!2,a3,a6,b3~n,b4!1,b6).GN(a3,a4,a6,b2,b3,b3,b4,b4!1,b6!+) + a3FucT -> \
F(a2,a3!2,a4,a6).F%1(a2!3,a3,a4,a6).A(a2!3,a3,a6,b3~n,b4!1,b6).GN(a3!2,a4,a6,b2,b3,b3,b4,b4!1,b6!+) + a3FucT MM(kf24*factor_kf24,Km24*factor_Km24)

#Rule 25
F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3~r!+,b4,b6) + GalNAcT_A -> \
F(a2!1,a3,a4,a6).AN(a3!2).A(a2!1,a3!2,a6,b3~r!+,b4,b6) + GalNAcT_A MM(kf25,Km25)
F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3,b4!+,b6) + GalNAcT_A -> \
F(a2!1,a3,a4,a6).AN(a3!2).A(a2!1,a3!2,a6,b3,b4!+,b6) + GalNAcT_A MM(kf25,Km25)
F(a2!1,a3,a4,a6).A(a2!1,a3,a6,b3,b4,b6!+) + GalNAcT_A -> \
F(a2!1,a3,a4,a6).AN(a3!2).A(a2!1,a3!2,a6,b3,b4,b6!+) + GalNAcT_A MM(kf25,Km25)

#Rule 26
F(a2!1,a3,a4,a6).A%1(a2!1,a3,a6,b3~r!+,b4,b6) + GalT_B -> \
F(a2!1,a3,a4,a6).A(a2,a3!2,a6,b3~n,b4,b6).A%1(a2!1,a3!2,a6,b3~r!+,b4,b6) + GalT_B MM(kf26,Km26)
F(a2!1,a3,a4,a6).A%1(a2!1,a3,a6,b3~n,b4!+,b6) + GalT_B -> \
F(a2!1,a3,a4,a6).A(a2,a3!2,a6,b3~n,b4,b6).A%1(a2!1,a3!2,a6,b3,b4!+,b6) + GalT_B MM(kf26,Km26)
F(a2!1,a3,a4,a6).A%1(a2!1,a3,a6,b3~n,b4,b6!+) + GalT_B -> \
F(a2!1,a3,a4,a6).A(a2,a3!2,a6,b3~n,b4,b6).A%1(a2!1,a3!2,a6,b3,b4,b6!+) + GalT_B MM(kf26,Km26)

end reaction rules


begin observables

    Species P1_1 \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!7,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!7,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!6,b4!10,b6,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3,b4!10,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!7,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3!8,b4,b4,b6,r~0).GN(a3,a4,a6,b2!7,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3!10,b4!6,b4,b6,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3!10,b4,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!7,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!7,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!6,b4!10,b6,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3,b4!10,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!7,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!7,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4!6,b4,b6,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3!10,b4,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!7,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!7,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4!6,b4,b6,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3!10,b4,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!7,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!7,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!6,b4!10,b6,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3,b4!10,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!7,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!7,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4!6,b4,b6,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3!10,b4,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!7,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4,b4!8,b6,r~0).GN(a3,a4,a6,b2!7,b3,b3,b4,b4!9,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!6,b4!10,b6,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3,b4!10,b6)
    Species P1_2 \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4,b4,b6!7,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3!10,b4,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!7,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3,b4!10,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4,b4,b6!7,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3!10,b4,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4,b4,b6!7,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3!10,b4,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!7,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3,b4!10,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!7,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3,b4!10,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4,b4,b6!7,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3!10,b4,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!7,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3,b4!10,b6)

    Species P2_1 \
    GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4!9,a6,b2!5,b3!7,b3,b4,b4,b6,r~0).GN(a3,a4!10,a6,b2!6,b3!8,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!7,b4,b6).A(a2,a3,a6,b3!8,b4,b6).F(a2,a3,a4!9,a6).F(a2,a3,a4!10,a6).F(a2,a3,a4,a6!11), \
    GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4!9,a6,b2!5,b3!7,b3,b4,b4,b6,r~0).GN(a3!10,a4,a6,b2!6,b3,b3,b4!8,b4,b6,r~0).A(a2,a3,a6,b3!7,b4,b6).A(a2,a3,a6,b3,b4!8,b6).F(a2,a3,a4!9,a6).F(a2,a3!10,a4,a6).F(a2,a3,a4,a6!11), \
    GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3!9,a4,a6,b2!5,b3,b3,b4!7,b4,b6,r~0).GN(a3,a4!10,a6,b2!6,b3!8,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!7,b6).A(a2,a3,a6,b3!8,b4,b6).F(a2,a3!9,a4,a6).F(a2,a3,a4!10,a6).F(a2,a3,a4,a6!11), \
    GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3!9,a4,a6,b2!5,b3,b3,b4!7,b4,b6,r~0).GN(a3!10,a4,a6,b2!6,b3,b3,b4!8,b4,b6,r~0).A(a2,a3,a6,b3,b4!7,b6).A(a2,a3,a6,b3,b4!8,b6).F(a2,a3!9,a4,a6).F(a2,a3!10,a4,a6).F(a2,a3,a4,a6!11)
    Species P2_2 \
    GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!7,b3,b4,b4,b6,r~0).GN(a3,a4!9,a6,b2!6,b3!8,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!7,b4,b6).A(a2!10,a3,a6,b3!8,b4,b6).F(a2,a3,a4!9,a6).F(a2!10,a3,a4,a6).F(a2,a3,a4,a6!11), \
    GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!7,b3,b4,b4,b6,r~0).GN(a3!9,a4,a6,b2!6,b3,b3,b4!8,b4,b6,r~0).A(a2,a3,a6,b3!7,b4,b6).A(a2!10,a3,a6,b3,b4!8,b6).F(a2,a3!9,a4,a6).F(a2!10,a3,a4,a6).F(a2,a3,a4,a6!11), \
    GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!7,b4,b6,r~0).GN(a3,a4!9,a6,b2!6,b3!8,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!7,b6).A(a2!10,a3,a6,b3!8,b4,b6).F(a2,a3,a4!9,a6).F(a2!10,a3,a4,a6).F(a2,a3,a4,a6!11), \
    GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!7,b4,b6,r~0).GN(a3!9,a4,a6,b2!6,b3,b3,b4!8,b4,b6,r~0).A(a2,a3,a6,b3,b4!7,b6).A(a2!10,a3,a6,b3,b4!8,b6).F(a2,a3!9,a4,a6).F(a2!10,a3,a4,a6).F(a2,a3,a4,a6!11)
    Species P2_3 \
    GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!6,b3!7,b3,b4,b4,b6,r~0).GN(a3,a4!9,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!7,b4,b6).A(a2!10,a3,a6,b3!8,b4,b6).F(a2,a3,a4!9,a6).F(a2!10,a3,a4,a6).F(a2,a3,a4,a6!11), \
    GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!6,b3!7,b3,b4,b4,b6,r~0).GN(a3!9,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).A(a2,a3,a6,b3!7,b4,b6).A(a2!10,a3,a6,b3,b4!8,b6).F(a2,a3!9,a4,a6).F(a2!10,a3,a4,a6).F(a2,a3,a4,a6!11), \
    GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!6,b3,b3,b4!7,b4,b6,r~0).GN(a3,a4!9,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!7,b6).A(a2!10,a3,a6,b3!8,b4,b6).F(a2,a3,a4!9,a6).F(a2!10,a3,a4,a6).F(a2,a3,a4,a6!11), \
    GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!6,b3,b3,b4!7,b4,b6,r~0).GN(a3!9,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).A(a2,a3,a6,b3,b4!7,b6).A(a2!10,a3,a6,b3,b4!8,b6).F(a2,a3!9,a4,a6).F(a2!10,a3,a4,a6).F(a2,a3,a4,a6!11)

    Species P3_1 \
    G(a3!11).M(a2!1,a2,a3!11,a3,a6,a6,b2,b4,b4,b6).M(a2!1,a2!2,a3,a3,a6,a6,b2,b4,b4,b6).M(a2,a2!2,a3!3,a3,a6,a6,b2,b4,b4,b6).M(a2!4,a2,a3,a3,a6,a6,b2,b4,b4,b6).M(a2!4,a2,a3!5,a3,a6,a6,b2,b4,b4,b6).M(a2!6,a2,a3,a3,a6,a6,b2,b4,b4,b6).M(a2!6,a2,a3,a3,a6!7,a6,b2,b4,b4,b6).M(a2,a2,a3!5,a3,a6!7,a6!8,b2,b4,b4,b6).M(a2,a2,a3!3,a3,a6!8,a6,b2,b4!9,b4,b6).GN(a3,a4,a6,b2,b3,b3,b4!9,b4!10,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!10,b4,b6,r~1)

    Species P4_1 \
    GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!10,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!7,b4,b6,r~0).A(a2,a3!9,a6,b3,b4!7,b6).A(a2,a3,a6,b3!10,b4,b6).F(a2,a3,a4,a6!8).NN(a3!9,a6), \
    GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!10,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!7,b4,b6,r~0).A(a2,a3,a6!9,b3,b4!7,b6).A(a2,a3,a6,b3!10,b4,b6).F(a2,a3,a4,a6!8).NN(a3,a6!9), \
    GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!10,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!7,b4,b6,r~0).A(a2,a3!9,a6,b3,b4!7,b6).A(a2,a3,a6,b3,b4!10,b6).F(a2,a3,a4,a6!8).NN(a3!9,a6), \
    GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!10,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!7,b4,b6,r~0).A(a2,a3,a6!9,b3,b4!7,b6).A(a2,a3,a6,b3,b4!10,b6).F(a2,a3,a4,a6!8).NN(a3,a6!9)
    Species P4_2 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!7,b4,b6,r~0).A(a2,a3,a6,b3,b4!7,b6).A(a2,a3!10,a6,b3,b4!9,b6).NN(a3!10,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3!7,b4,b4,b6,r~0).A(a2,a3,a6,b3!7,b4,b6).A(a2,a3!10,a6,b3,b4!9,b6).NN(a3!10,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!7,b4,b6,r~0).A(a2,a3,a6,b3,b4!7,b6).A(a2,a3,a6!10,b3,b4!9,b6).NN(a3,a6!10), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3!7,b4,b4,b6,r~0).A(a2,a3,a6,b3!7,b4,b6).A(a2,a3,a6!10,b3,b4!9,b6).NN(a3,a6!10)

    Species P5_1 \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3!9,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!7,b4,b6,r~0).A(a2,a3,a6,b3,b4!7,b6).A(a2!11,a3!10,a6,b3,b4!8,b6).A(a2,a3!10,a6,b3,b4,b6).F(a2,a3!9,a4,a6).F(a2!11,a3,a4,a6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4!9,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!7,b4,b6,r~0).A(a2,a3,a6,b3,b4!7,b6).A(a2!11,a3!10,a6,b3!8,b4,b6).A(a2,a3!10,a6,b3,b4,b6).F(a2,a3,a4!9,a6).F(a2!11,a3,a4,a6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3!9,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!7,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!7,b4,b6).A(a2!11,a3!10,a6,b3,b4!8,b6).A(a2,a3!10,a6,b3,b4,b6).F(a2,a3!9,a4,a6).F(a2!11,a3,a4,a6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4!9,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!7,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!7,b4,b6).A(a2!11,a3!10,a6,b3!8,b4,b6).A(a2,a3!10,a6,b3,b4,b6).F(a2,a3,a4!9,a6).F(a2!11,a3,a4,a6)
    Species P5_2 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!7,b4,b6,r~0).A(a2!10,a3!11,a6,b3,b4!7,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3!11,a6,b3,b4,b6).F(a2!10,a3,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!7,b4,b6,r~0).A(a2!10,a3!11,a6,b3,b4!7,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3!11,a6,b3,b4,b6).F(a2!10,a3,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!7,b3,b4,b4,b6,r~0).A(a2!10,a3!11,a6,b3!7,b4,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3!11,a6,b3,b4,b6).F(a2!10,a3,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!7,b3,b4,b4,b6,r~0).A(a2!10,a3!11,a6,b3!7,b4,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3!11,a6,b3,b4,b6).F(a2!10,a3,a4,a6)
    Species P5_3 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!5,b3,b3,b4!7,b4,b6,r~0).A(a2!10,a3!11,a6,b3,b4!7,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3!11,a6,b3,b4,b6).F(a2!10,a3,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!5,b3,b3,b4!7,b4,b6,r~0).A(a2!10,a3!11,a6,b3,b4!7,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3!11,a6,b3,b4,b6).F(a2!10,a3,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!5,b3!7,b3,b4,b4,b6,r~0).A(a2!10,a3!11,a6,b3!7,b4,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3!11,a6,b3,b4,b6).F(a2!10,a3,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!5,b3!7,b3,b4,b4,b6,r~0).A(a2!10,a3!11,a6,b3!7,b4,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3!11,a6,b3,b4,b6).F(a2!10,a3,a4,a6)

    Species P6_1 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3,a4!10,a6,b2,b3!9,b3,b4,b4,b6!7,r~0).GN(a3,a4,a6,b2!5,b3!11,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!11,b4,b6).A(a2,a3,a6,b3!9,b4,b6).F(a2,a3,a4!10,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3!10,a4,a6,b2,b3,b3,b4!9,b4,b6!7,r~0).GN(a3,a4,a6,b2!5,b3!11,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!11,b4,b6).A(a2,a3,a6,b3,b4!9,b6).F(a2,a3!10,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3,a4!10,a6,b2,b3!9,b3,b4,b4,b6!7,r~0).GN(a3,a4,a6,b2!5,b3,b3,b4!11,b4,b6,r~0).A(a2,a3,a6,b3,b4!11,b6).A(a2,a3,a6,b3!9,b4,b6).F(a2,a3,a4!10,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3!10,a4,a6,b2,b3,b3,b4!9,b4,b6!7,r~0).GN(a3,a4,a6,b2!5,b3,b3,b4!11,b4,b6,r~0).A(a2,a3,a6,b3,b4!11,b6).A(a2,a3,a6,b3,b4!9,b6).F(a2,a3!10,a4,a6)
    Species P6_2 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2,b3!11,b3,b4,b4,b6!7,r~0).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!5,b3,b3,b4,b4,b6,r~0).A(a2!10,a3,a6,b3!11,b4,b6).A(a2,a3,a6,b3!9,b4,b6).F(a2!10,a3,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2,b3!11,b3,b4,b4,b6!7,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!5,b3,b3,b4,b4,b6,r~0).A(a2!10,a3,a6,b3!11,b4,b6).A(a2,a3,a6,b3,b4!9,b6).F(a2!10,a3,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2,b3,b3,b4!11,b4,b6!7,r~0).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!5,b3,b3,b4,b4,b6,r~0).A(a2!10,a3,a6,b3,b4!11,b6).A(a2,a3,a6,b3!9,b4,b6).F(a2!10,a3,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2,b3,b3,b4!11,b4,b6!7,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!5,b3,b3,b4,b4,b6,r~0).A(a2!10,a3,a6,b3,b4!11,b6).A(a2,a3,a6,b3,b4!9,b6).F(a2!10,a3,a4,a6)
    Species P6_3 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2,b3!11,b3,b4,b4,b6!7,r~0).GN(a3,a4!10,a6,b2!5,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!11,b4,b6).A(a2,a3,a6,b3!9,b4,b6).F(a2,a3,a4!10,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2,b3!11,b3,b4,b4,b6!7,r~0).GN(a3!10,a4,a6,b2!5,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!11,b4,b6).A(a2,a3,a6,b3,b4!9,b6).F(a2,a3!10,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2,b3,b3,b4!11,b4,b6!7,r~0).GN(a3,a4!10,a6,b2!5,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!11,b6).A(a2,a3,a6,b3!9,b4,b6).F(a2,a3,a4!10,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2,b3,b3,b4!11,b4,b6!7,r~0).GN(a3!10,a4,a6,b2!5,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!11,b6).A(a2,a3,a6,b3,b4!9,b6).F(a2,a3!10,a4,a6)

    Species P7_1 \
    F(a2,a3,a4,a6!11).GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!7,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!7,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!6,b4!10,b6,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3,b4!10,b6), \
    F(a2,a3,a4,a6!11).GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!7,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3!8,b4,b4,b6,r~0).GN(a3,a4,a6,b2!7,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3!10,b4!6,b4,b6,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3!10,b4,b6), \
    F(a2,a3,a4,a6!11).GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!7,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!7,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!6,b4!10,b6,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3,b4!10,b6), \
    F(a2,a3,a4,a6!11).GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!7,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!7,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4!6,b4,b6,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3!10,b4,b6), \
    F(a2,a3,a4,a6!11).GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!7,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!7,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4!6,b4,b6,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3!10,b4,b6), \
    F(a2,a3,a4,a6!11).GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!7,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!7,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!6,b4!10,b6,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3,b4!10,b6), \
    F(a2,a3,a4,a6!11).GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!7,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!7,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4!6,b4,b6,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3!10,b4,b6), \
    F(a2,a3,a4,a6!11).GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!7,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4,b4!8,b6,r~0).GN(a3,a4,a6,b2!7,b3,b3,b4,b4!9,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!6,b4!10,b6,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3,b4!10,b6)
    Species P7_2 \
    F(a2,a3,a4,a6!11).GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4,b4,b6!7,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3!10,b4,b6), \
    F(a2,a3,a4,a6!11).GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!7,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3,b4!10,b6), \
    F(a2,a3,a4,a6!11).GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4,b4,b6!7,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3!10,b4,b6), \
    F(a2,a3,a4,a6!11).GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4,b4,b6!7,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3!10,b4,b6), \
    F(a2,a3,a4,a6!11).GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!7,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3,b4!10,b6), \
    F(a2,a3,a4,a6!11).GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!7,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3,b4!10,b6), \
    F(a2,a3,a4,a6!11).GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4,b4,b6!7,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3!10,b4,b6), \
    F(a2,a3,a4,a6!11).GN(a3,a4,a6!11,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!7,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3,b4!10,b6)

    Species P8_1 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!9,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3!11,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4,b4,b6!7,r~0).A(a2,a3,a6,b3!10,b4,b6).A(a2,a3,a6,b3!11,b4,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!9,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4!11,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4,b4,b6!7,r~0).A(a2,a3,a6,b3!10,b4,b6).A(a2,a3,a6,b3,b4!11,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!9,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3!11,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!7,r~0).A(a2,a3,a6,b3,b4!10,b6).A(a2,a3,a6,b3!11,b4,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!9,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4!11,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!7,r~0).A(a2,a3,a6,b3,b4!10,b6).A(a2,a3,a6,b3,b4!11,b6)
    Species P8_2 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!9,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4!10,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!9,b4!11,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A(a2,a3,a6,b3,b4!10,b6).A(a2,a3,a6,b3,b4!11,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!9,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4!10,b4,b6,r~0).GN(a3,a4,a6,b2,b3!11,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A(a2,a3,a6,b3,b4!10,b6).A(a2,a3,a6,b3!11,b4,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!9,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3!10,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!9,b4!11,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A(a2,a3,a6,b3!10,b4,b6).A(a2,a3,a6,b3,b4!11,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!9,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3!10,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!11,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).A(a2,a3,a6,b3!10,b4,b6).A(a2,a3,a6,b3!11,b4,b6)
    Species P8_3 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!9,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!11,b3,b4,b4,b6!7,r~0).A(a2,a3,a6,b3!10,b4,b6).A(a2,a3,a6,b3!11,b4,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!9,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!9,b4!10,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!11,b3,b4,b4,b6!7,r~0).A(a2,a3,a6,b3,b4!10,b6).A(a2,a3,a6,b3!11,b4,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!9,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!11,b4,b6!7,r~0).A(a2,a3,a6,b3!10,b4,b6).A(a2,a3,a6,b3,b4!11,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!9,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!9,b4!10,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!11,b4,b6!7,r~0).A(a2,a3,a6,b3,b4!10,b6).A(a2,a3,a6,b3,b4!11,b6)

    Species P9_1 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4,b4,b6!7,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3!10,b4,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4,b4,b6!7,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3!10,b4,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!7,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3,b4!10,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!10,b4,b6!7,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3,b4!10,b6)
    Species P9_2 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!7,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!7,b4!10,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3,b4!10,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!7,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!7,b4!10,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3,b4!10,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!7,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4!7,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!9,b6).A(a2,a3,a6,b3!10,b4,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!7,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!10,b3,b4!7,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!9,b4,b6).A(a2,a3,a6,b3!10,b4,b6)

    Species P10_1 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3!9,a4,a6,b2!5,b3,b3,b4!7,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!10,b4,b6,r~0).A(a2,a3,a6,b3,b4!7,b6).A(a2,a3,a6,b3,b4!10,b6).F(a2,a3!9,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4!9,a6,b2!5,b3!7,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!10,b4,b6,r~0).A(a2,a3,a6,b3!7,b4,b6).A(a2,a3,a6,b3,b4!10,b6).F(a2,a3,a4!9,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3!9,a4,a6,b2!5,b3,b3,b4!7,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!10,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!7,b6).A(a2,a3,a6,b3!10,b4,b6).F(a2,a3!9,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4!9,a6,b2!5,b3!7,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!10,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!7,b4,b6).A(a2,a3,a6,b3!10,b4,b6).F(a2,a3,a4!9,a6)
    Species P10_2 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!5,b4,b4,b6).GN(a3!9,a4,a6,b2!5,b3,b3,b4!7,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!10,b4,b6,r~0).A(a2,a3,a6,b3,b4!7,b6).A(a2,a3,a6,b3,b4!10,b6).F(a2,a3!9,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!5,b4,b4,b6).GN(a3,a4!9,a6,b2!5,b3!7,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!10,b4,b6,r~0).A(a2,a3,a6,b3!7,b4,b6).A(a2,a3,a6,b3,b4!10,b6).F(a2,a3,a4!9,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!5,b4,b4,b6).GN(a3!9,a4,a6,b2!5,b3,b3,b4!7,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!10,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!7,b6).A(a2,a3,a6,b3!10,b4,b6).F(a2,a3!9,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!5,b4,b4,b6).GN(a3,a4!9,a6,b2!5,b3!7,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!10,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!7,b4,b6).A(a2,a3,a6,b3!10,b4,b6).F(a2,a3,a4!9,a6)
    Species P10_3 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!5,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!7,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!10,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!7,b4,b6).A(a2!9,a3,a6,b3!10,b4,b6).F(a2!9,a3,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!5,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!7,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!10,b4,b6,r~0).A(a2,a3,a6,b3!7,b4,b6).A(a2!9,a3,a6,b3,b4!10,b6).F(a2!9,a3,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!5,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!7,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!10,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!7,b6).A(a2!9,a3,a6,b3!10,b4,b6).F(a2!9,a3,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!5,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!7,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!10,b4,b6,r~0).A(a2,a3,a6,b3,b4!7,b6).A(a2!9,a3,a6,b3,b4!10,b6).F(a2!9,a3,a4,a6)

    Species P11_1 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!5,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!7,b4,b6,r~0).A(a2,a3!9,a6,b3,b4!7,b6).NN(a3!9,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!5,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!7,b4,b6,r~0).A(a2,a3,a6!9,b3,b4!7,b6).NN(a3,a6!9)
    Species P11_2 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2,b3,b3,b4!6,b4,b6,r~0).GN(a3,a4,a6,b2!5,b3,b3,b4!7,b4,b6,r~0).A(a2,a3!9,a6,b3,b4!7,b6).NN(a3!9,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2,b3,b3,b4!6,b4,b6,r~0).GN(a3,a4,a6,b2!5,b3,b3,b4!7,b4,b6,r~0).A(a2,a3,a6!9,b3,b4!7,b6).NN(a3,a6!9)

    Species P12_1 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3!7,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).M(a2,a2,a3!7,a3,a6,a6,b2,b4,b4,b6).GN(a3,a4!10,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!9,b4,b6).F(a2,a3,a4!10,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3!7,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).M(a2,a2,a3!7,a3,a6,a6,b2,b4,b4,b6).GN(a3!10,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).A(a2,a3,a6,b3,b4!9,b6).F(a2,a3!10,a4,a6)
    Species P12_2 \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3!7,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).M(a2,a2,a3!7,a3,a6,a6,b2,b4,b4,b6).GN(a3,a4!9,a6,b2!6,b3!8,b3,b4,b4,b6,r~0).A(a2!10,a3,a6,b3!8,b4,b6).F(a2,a3,a4!9,a6).F(a2!10,a3,a4,a6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3!7,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).M(a2,a2,a3!7,a3,a6,a6,b2,b4,b4,b6).GN(a3!9,a4,a6,b2!6,b3,b3,b4!8,b4,b6,r~0).A(a2!10,a3,a6,b3,b4!8,b6).F(a2,a3!9,a4,a6).F(a2!10,a3,a4,a6)
    Species P12_3 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3!7,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).M(a2,a2,a3!7,a3,a6,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).A(a2!10,a3,a6,b3!9,b4,b6).F(a2!10,a3,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3!7,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).M(a2,a2,a3!7,a3,a6,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).A(a2!10,a3,a6,b3,b4!9,b6).F(a2!10,a3,a4,a6)

    Species P13_1 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!9,b4,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6!7).GN(a3,a4,a6,b2!5,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4,b4,b6!7,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!9,b6)
    Species P13_2 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!7,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!7,b4!9,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!9,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!7,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!9,b3,b4!7,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!9,b4,b6)
    Species P13_3 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!7,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!7,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!9,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!7,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!7,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!9,b4,b6)

    Species P14_1 \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4!8,b4,b6).M(a2,a2,a3!7,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).M(a2,a2,a3!7,a3,a6,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!8,b4,b6,r~0).A(a2,a3,a6,b3!9,b4,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4!8,b4,b6).M(a2,a2,a3!7,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).M(a2,a2,a3!7,a3,a6,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!8,b4,b6,r~0).A(a2,a3,a6,b3,b4!9,b6)
    Species P14_2 \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4!8,b4,b6).M(a2,a2,a3!7,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).M(a2,a2,a3!7,a3,a6,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!9,b3,b4!8,b4,b6,r~0).A(a2,a3,a6,b3!9,b4,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4!8,b4,b6).M(a2,a2,a3!7,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).M(a2,a2,a3!7,a3,a6,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!8,b4!9,b6,r~0).A(a2,a3,a6,b3,b4!9,b6)
    Species P14_3 \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4!7,b4,b6).M(a2,a2,a3,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2!6,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3!9,b3,b4!7,b4,b6,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3!9,b4,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4!7,b4,b6).M(a2,a2,a3,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2!6,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2,b3!9,b3,b4!7,b4,b6,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3!9,b4,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4!7,b4,b6).M(a2,a2,a3,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2!6,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!7,b4!9,b6,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3,b4!9,b6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4!7,b4,b6).M(a2,a2,a3,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2!6,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!7,b4!9,b6,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3,b4!9,b6)

    Species P15_1 \
    F(a2,a3,a4,a6!7).GN(a3,a4,a6!7,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3!9,b4,b6), \
    F(a2,a3,a4,a6!7).GN(a3,a4,a6!7,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3!9,b4,b6), \
    F(a2,a3,a4,a6!7).GN(a3,a4,a6!7,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).A(a2,a3,a6,b3!8,b4,b6).A(a2,a3,a6,b3,b4!9,b6), \
    F(a2,a3,a4,a6!7).GN(a3,a4,a6!7,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).A(a2,a3,a6,b3,b4!8,b6).A(a2,a3,a6,b3,b4!9,b6)

    Species P16_1 \
    F(a2,a3,a4,a6!7).GN(a3,a4,a6!7,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2,b4,b4,b6).GN(a3,a4!9,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!6,b4,b6,r~0).A(a2,a3,a6,b3!8,b4,b6).F(a2,a3,a4!9,a6), \
    F(a2,a3,a4,a6!7).GN(a3,a4,a6!7,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4!6,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2,b4,b4,b6).GN(a3!9,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2,b3,b3,b4!6,b4,b6,r~0).A(a2,a3,a6,b3,b4!8,b6).F(a2,a3!9,a4,a6)
    Species P16_2 \
    F(a2,a3,a4,a6!7).GN(a3,a4,a6!7,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2!9,a3,a6,b3!8,b4,b6).F(a2!9,a3,a4,a6), \
    F(a2,a3,a4,a6!7).GN(a3,a4,a6!7,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2!9,a3,a6,b3,b4!8,b6).F(a2!9,a3,a4,a6)
    Species P16_3 \
    F(a2,a3,a4,a6!7).GN(a3,a4,a6!7,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3,a4!9,a6,b2!5,b3!8,b3,b4,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!8,b4,b6).F(a2,a3,a4!9,a6), \
    F(a2,a3,a4,a6!7).GN(a3,a4,a6!7,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!5,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6,b2!6,b4,b4,b6).GN(a3!9,a4,a6,b2!5,b3,b3,b4!8,b4,b6,r~0).GN(a3,a4,a6,b2!6,b3,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3,b4!8,b6).F(a2,a3!9,a4,a6)

    Species P17_1 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3!7,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).M(a2,a2,a3!7,a3,a6,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).A(a2,a3,a6,b3,b4!9,b6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3!7,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).M(a2,a2,a3!7,a3,a6,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!9,b4,b6)
    Species P17_2 \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3!7,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).M(a2,a2,a3!7,a3,a6,a6,b2,b4,b4,b6).GN(a3,a4!8,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!9,b4,b6).F(a2,a3,a4!8,a6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3!7,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).M(a2,a2,a3!7,a3,a6,a6,b2,b4,b4,b6).GN(a3!8,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).A(a2,a3,a6,b3,b4!9,b6).F(a2,a3!8,a4,a6)
    Species P17_3 \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3!7,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).M(a2,a2,a3!7,a3,a6,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).A(a2!8,a3,a6,b3,b4!9,b6).F(a2!8,a3,a4,a6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3!7,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).M(a2,a2,a3!7,a3,a6,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).A(a2!8,a3,a6,b3!9,b4,b6).F(a2!8,a3,a4,a6)

    Species P18_1 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).GN(a3!7,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).A(a2,a3,a6,b3,b4!9,b6).F(a2,a3!7,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).GN(a3,a4!7,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).A(a2,a3,a6,b3!9,b4,b6).F(a2,a3,a4!7,a6)
    Species P18_2 \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).A(a2!7,a3,a6,b3,b4!9,b6).F(a2!7,a3,a4,a6), \
    F(a2,a3,a4,a6!8).GN(a3,a4,a6!8,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).GN(a3,a4,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).A(a2!7,a3,a6,b3!9,b4,b6).F(a2!7,a3,a4,a6)
    Species P18_3 \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).GN(a3!8,a4,a6,b2!6,b3,b3,b4!9,b4,b6,r~0).A(a2!7,a3,a6,b3,b4!9,b6).F(a2,a3!8,a4,a6).F(a2!7,a3,a4,a6), \
    GN(a3,a4,a6,b2,b3,b3,b4!1,b4,b6,r~1).GN(a3,a4,a6,b2,b3,b3,b4!1,b4!2,b6,r~0).M(a2,a2,a3!3,a3,a6!4,a6,b2,b4!2,b4,b6).M(a2,a2,a3!3,a3,a6,a6,b2!6,b4,b4,b6).M(a2,a2,a3,a3,a6!4,a6!5,b2,b4,b4,b6).M(a2,a2,a3,a3,a6!5,a6,b2,b4,b4,b6).GN(a3,a4!8,a6,b2!6,b3!9,b3,b4,b4,b6,r~0).A(a2!7,a3,a6,b3!9,b4,b6).F(a2,a3,a4!8,a6).F(a2!7,a3,a4,a6)

end observables


end model

generate_network({overwrite=>1,max_iter=>18,max_agg=>18,max_stoich=>{A=>6,AN=>2,NN=>3,F=>5,GN=>9}})
# simulate_ode({t_end=>22.4,n_steps=>224})
